def model my_model as

  def comp pv_0D_1D_coupler_type as
    var t: second {pub: in};
    // Constants
    var rho: Js2_per_m5 {pub: in};
    var I: Js2_per_m6 {pub: in};
    // Inputs
    var P_t_star: J_per_m3 {pub: in};
    var A_star: m3 {pub: in};
    var P_s_0D: J_per_m3 {pub: in};
    // Latent variables
    var P_s_star: J_per_m3 {pub: out};
    var q_star: m3_per_s {init: 0.0, pub: out};
    // Outputs
    var flux: m3_per_s {init: 0.0, pub: out};
    P_s_star = P_t_star-0.5{dimensionless}*rho*sqr(q_star/A_star);
    ode(q_star, t) = (P_s_star-P_s_0D)/I;
    ode(flux, t) = rho*Q_star;
  enddef;

  def comp imposter_1D as
    var t: second {pub: in};
    // Inputs
    var P_t_star: J_per_m3 {priv: in, pub: out};
    var A_star: m3 {priv: in, pub: out};
    var flux: m3_per_s {pub: in};
  enddef;

  def comp sensor_type as
    var t: second {pub: in};
    // Constitutive parameters
    var par1_out: J_per_m3 {pub: out};
    var par2_out: m3_per_s {pub: out};
    // State Variables
    var u: J_per_m3 {pub: in};
    var v: m3_per_s {pub: in};
    // Constitutive Relations
    par1_out = 3{dimensionless}*u;
    par2_out = 1.2{dimensionless}*v;
  enddef;

  def comp heart_simple_wCont as
    var t: second {pub: in};
    var s: second {init: 0.0, pub: out};
    // Constitutive parameters
    var mt: second;
    var e_a: dimensionless;
    var e_v: dimensionless;
    var T: second {pub: in};
    var T_ac: second {pub: in};
    var T_ar: second {pub: in};
    // var T_ac_norm: dimensionless;
    // var T_ar_norm: dimensionless;
    var t_astart: second {pub: in};
    var t_astart_norm: dimensionless;
    var T_vc: second {pub: in};
    var T_vr: second {pub: in};
    // var T_vc_norm: dimensionless;
    // var T_vr_norm: dimensionless;
    var t_vstart: second {pub: in};
    var t_vstart_norm: dimensionless;
    var T_wCont: second {pub: out};
    var T_ac_wCont: second {pub: out};
    var T_ar_wCont: second {pub: out};
    var T_vc_wCont: second {pub: out};
    var T_vr_wCont: second {pub: out};
    var E_lv_A: J_per_m6 {pub: in};
    var E_lv_B: J_per_m6 {pub: in};
    var E_la_A: J_per_m6 {pub: in};
    var E_la_B: J_per_m6 {pub: in};
    var E_rv_A: J_per_m6 {pub: in};
    var E_rv_B: J_per_m6 {pub: in};
    var E_ra_A: J_per_m6 {pub: in};
    var E_ra_B: J_per_m6 {pub: in};
    var q_ra_0: m3 {pub: in};
    var q_rv_0: m3 {pub: in};
    var q_la_0: m3 {pub: in};
    var q_lv_0: m3 {pub: in};
    // State Variables
    var u_ra: J_per_m3 {pub: out};
    var u_rv: J_per_m3;
    var u_la: J_per_m3 {pub: out};
    var u_lv: J_per_m3;
    var u_root: J_per_m3 {pub: in};
    var u_par: J_per_m3 {pub: in};
    var v_trv: m3_per_s {init: 0, pub: out};
    var v_puv: m3_per_s {init: 0, pub: out};
    var v_miv: m3_per_s {init: 0, pub: out};
    var v_aov: m3_per_s {init: 0, pub: out};
    var v_svc: m3_per_s {pub: in};
    var v_ivc: m3_per_s {pub: in};
    var v_pvn: m3_per_s {pub: in};
    var L_trv: dimensionless;
    var L_puv: dimensionless;
    var L_miv: dimensionless;
    var L_aov: dimensionless;
    var A_eff_trv: m2;
    var A_eff_puv: m2;
    var A_eff_miv: m2;
    var A_eff_aov: m2;
    var A_nn_trv: m2 {pub: in};
    var A_nn_puv: m2 {pub: in};
    var A_nn_miv: m2 {pub: in};
    var A_nn_aov: m2 {pub: in};
    var l_eff: metre {pub: in};
    var K_vo_trv: m3_per_Js {pub: in};
    var K_vo_puv: m3_per_Js {pub: in};
    var K_vo_miv: m3_per_Js {pub: in};
    var K_vo_aov: m3_per_Js {pub: in};
    var K_vc_trv: m3_per_Js {pub: in};
    var K_vc_puv: m3_per_Js {pub: in};
    var K_vc_miv: m3_per_Js {pub: in};
    var K_vc_aov: m3_per_Js {pub: in};
    var M_rg_trv: dimensionless {pub: in};
    var M_rg_puv: dimensionless {pub: in};
    var M_rg_miv: dimensionless {pub: in};
    var M_rg_aov: dimensionless {pub: in};
    var M_st_trv: dimensionless {pub: in};
    var M_st_puv: dimensionless {pub: in};
    var M_st_miv: dimensionless {pub: in};
    var M_st_aov: dimensionless {pub: in};
    var rho: Js2_per_m5 {pub: in};
    var B_trv: dimensionless;
    var B_puv: dimensionless;
    var B_miv: dimensionless;
    var B_aov: dimensionless;
    var zeta_trv: dimensionless;
    var zeta_puv: dimensionless;
    var zeta_miv: dimensionless;
    var zeta_aov: dimensionless;
    var zeta_trv_pre: dimensionless {init: 0};
    var zeta_puv_pre: dimensionless {init: 0};
    var zeta_miv_pre: dimensionless {init: 0};
    var zeta_aov_pre: dimensionless {init: 0};
    var eps: dimensionless {init: 1e-14};
    var eps_1: dimensionless {init: 0.07};
    var eps_2: dimensionless {init: 0.02};
    // TODO the below parameters should be set in an init_states parameter file
    // q_lv gets identified, the others are set arbitrarily, identifying q_lv sets the stressed volume of the system.
    var q_lv: m3 {init: 0.00069934};
    var q_rv: m3 {init: 1e-05};
    var q_la: m3 {init: 4e-06};
    var q_ra: m3 {init: 4e-06};
    // calculate modified time due to changes in heart period. This can now be modified throughout a simulation.
    var chi_a: dimensionless {init: 0.0};
    var chi_afloor: dimensionless;
    chi_afloor = chi_a-floor(chi_a);
    ode(chi_a, t) = sel
      case (mt >= t_astart_norm) and (mt <= t_astart_norm+eps_1) and (chi_afloor <= 0.5{dimensionless}):
        0.5{second}/T_ac_wCont;
      case (t_astart_norm+eps_1 > 1.0{dimensionless}) and (mt <= t_astart_norm+eps_1-1.0{dimensionless}) and (chi_afloor <= 0.5{dimensionless}):
        0.5{second}/T_ac_wCont;
      case (chi_afloor > eps_2) and (chi_afloor <= 0.5{dimensionless}):
        0.5{second}/T_ac_wCont;
      case chi_afloor >= 0.5{dimensionless}:
        0.5{second}/T_ar_wCont;
      otherwise:
        0{dimensionless};
    endsel;
    var chi_v: dimensionless {init: 0.0};
    var chi_vfloor: dimensionless;
    chi_vfloor = chi_v-floor(chi_v);
    ode(chi_v, t) = sel
      case (mt >= t_vstart_norm) and (mt <= t_vstart_norm+eps_1) and (chi_vfloor <= 0.5{dimensionless}):
        0.5{second}/T_vc_wCont;
      case (t_vstart_norm+eps_1 > 1.0{dimensionless}) and (mt <= t_vstart_norm+eps_1-1.0{dimensionless}) and (chi_vfloor <= 0.5{dimensionless}):
        0.5{second}/T_vc_wCont;
      case (chi_vfloor > eps_2) and (chi_vfloor <= 0.5{dimensionless}):
        0.5{second}/T_vc_wCont;
      case chi_vfloor > 0.5{dimensionless}:
        0.5{second}/T_vr_wCont;
      otherwise:
        0{dimensionless};
    endsel;
    ode(s, t) = 1{second}/T_wCont;
    mt = s-floor(s);
    // control effects Assume all subperiods scale linearly for now. TODO IMPROVE THIS
    var Delta_T: second {pub: in};
    T_wCont = T+Delta_T;
    T_ac_wCont = T_ac*T_wCont/T;
    T_ar_wCont = T_ar*T_wCont/T;
    T_vc_wCont = T_vc*T_wCont/T;
    T_vr_wCont = T_vr*T_wCont/T;
    // Elastance Functions
    t_astart_norm = t_astart/T;
    // T_ac_norm = T_ac/T;
    // T_ar_norm = T_vc/T;
    t_vstart_norm = t_vstart/T;
    // T_vc_norm = T_vc/T;
    // T_vr_norm = T_vr/T;
    e_a = 0.5{dimensionless}*(1{dimensionless}-cos(2{dimensionless}*pi*chi_afloor));
    e_v = 0.5{dimensionless}*(1{dimensionless}-cos(2{dimensionless}*pi*chi_vfloor));
    // Valve model
    B_trv = rho/(2{dimensionless}*sqr(A_eff_trv)+eps);
    B_puv = rho/(2{dimensionless}*sqr(A_eff_puv)+eps);
    B_miv = rho/(2{dimensionless}*sqr(A_eff_miv)+eps);
    B_aov = rho/(2{dimensionless}*sqr(A_eff_aov)+eps);
    L_trv = rho*l_eff/(A_eff_trv+eps);
    L_puv = rho*l_eff/(A_eff_puv+eps);
    L_miv = rho*l_eff/(A_eff_miv+eps);
    L_aov = rho*l_eff/(A_eff_aov+eps);
    A_eff_trv = (M_st_trv*A_nn_trv-M_rg_trv*A_nn_trv)*zeta_trv+M_rg_trv*A_nn_trv;
    A_eff_puv = (M_st_puv*A_nn_puv-M_rg_puv*A_nn_puv)*zeta_puv+M_rg_puv*A_nn_puv;
    A_eff_miv = (M_st_miv*A_nn_miv-M_rg_miv*A_nn_miv)*zeta_miv+M_rg_miv*A_nn_miv;
    A_eff_aov = (M_st_aov*A_nn_aov-M_rg_aov*A_nn_aov)*zeta_aov+M_rg_aov*A_nn_aov;
    ode(zeta_trv_pre, t) = sel
      case u_ra >= u_rv:
        (1{dimensionless}-zeta_trv_pre)*K_vo_trv*(u_ra-u_rv);
      otherwise:
        zeta_trv_pre*K_vc_trv*(u_ra-u_rv);
    endsel;
    ode(zeta_puv_pre, t) = sel
      case u_rv >= u_par:
        (1{dimensionless}-zeta_puv_pre)*K_vo_puv*(u_rv-u_par);
      otherwise:
        zeta_puv_pre*K_vc_puv*(u_rv-u_par);
    endsel;
    ode(zeta_miv_pre, t) = sel
      case u_la >= u_lv:
        (1{dimensionless}-zeta_miv_pre)*K_vo_miv*(u_la-u_lv);
      otherwise:
        zeta_miv_pre*K_vc_miv*(u_la-u_lv);
    endsel;
    ode(zeta_aov_pre, t) = sel
      case u_lv >= u_root:
        (1{dimensionless}-zeta_aov_pre)*K_vo_aov*(u_lv-u_root);
      otherwise:
        zeta_aov_pre*K_vc_aov*(u_lv-u_root);
    endsel;
    // The below ensures zeta can't be negative
    zeta_trv = max(zeta_trv_pre, 0{dimensionless});
    zeta_puv = max(zeta_puv_pre, 0{dimensionless});
    zeta_miv = max(zeta_miv_pre, 0{dimensionless});
    zeta_aov = max(zeta_aov_pre, 0{dimensionless});
    // calculate the flow through the valves
    ode(v_trv, t) = (-B_trv*v_trv*abs(v_trv)+u_ra-u_rv)/L_trv;
    ode(v_puv, t) = (-B_puv*v_puv*abs(v_puv)+u_rv-u_par)/L_puv;
    ode(v_miv, t) = (-B_miv*v_miv*abs(v_miv)+u_la-u_lv)/L_miv;
    ode(v_aov, t) = (-B_aov*v_aov*abs(v_aov)+u_lv-u_root)/L_aov;
    // Control from sympathetic
    var E_rv_A_wCont: J_per_m6 {pub: out};
    var E_lv_A_wCont: J_per_m6 {pub: out};
    // TODO The current control modifies the E_max-E_min instead of E_max.
    var Delta_E_rv: J_per_m6 {pub: in};
    var Delta_E_lv: J_per_m6 {pub: in};
    E_rv_A_wCont = E_rv_A+Delta_E_rv;
    E_lv_A_wCont = E_lv_A+Delta_E_lv;
    // Constitutive Relations
    u_ra = (e_a*E_ra_A+E_ra_B)*(q_ra-q_ra_0);
    u_rv = (e_v*E_rv_A_wCont+E_rv_B)*(q_rv-q_rv_0);
    u_la = (e_a*E_la_A+E_la_B)*(q_la-q_la_0);
    u_lv = (e_v*E_lv_A_wCont+E_lv_B)*(q_lv-q_lv_0);
    // Conservation Laws
    ode(q_ra, t) = v_svc+v_ivc-v_trv;
    ode(q_rv, t) = v_trv-v_puv;
    ode(q_la, t) = v_pvn-v_miv;
    ode(q_lv, t) = v_miv-v_aov;
  enddef;

  def comp heart_simple as
    var t: second {pub: in};
    var s: second {init: 0.0, pub: out};
    // Constitutive parameters
    var mt: second;
    var e_a: dimensionless;
    var e_v: dimensionless;
    var T: second {pub: in};
    var T_ac: second {pub: in};
    var T_ar: second {pub: in};
    var T_ac_norm: dimensionless;
    var T_ar_norm: dimensionless;
    var t_astart: second {pub: in};
    var t_astart_norm: dimensionless;
    var T_vc: second {pub: in};
    var T_vr: second {pub: in};
    var T_vc_norm: dimensionless;
    var T_vr_norm: dimensionless;
    var t_vstart: second {pub: in};
    var t_vstart_norm: dimensionless;
    var E_lv_A: J_per_m6 {pub: in};
    var E_lv_B: J_per_m6 {pub: in};
    var E_la_A: J_per_m6 {pub: in};
    var E_la_B: J_per_m6 {pub: in};
    var E_rv_A: J_per_m6 {pub: in};
    var E_rv_B: J_per_m6 {pub: in};
    var E_ra_A: J_per_m6 {pub: in};
    var E_ra_B: J_per_m6 {pub: in};
    var q_ra_0: m3 {pub: in};
    var q_rv_0: m3 {pub: in};
    var q_la_0: m3 {pub: in};
    var q_lv_0: m3 {pub: in};
    // State Variables
    var u_ra: J_per_m3 {pub: out};
    var u_rv: J_per_m3;
    var u_la: J_per_m3 {pub: out};
    var u_lv: J_per_m3;
    var u_root: J_per_m3 {pub: in};
    var u_par: J_per_m3 {pub: in};
    var v_trv: m3_per_s {init: 0, pub: out};
    var v_puv: m3_per_s {init: 0, pub: out};
    var v_miv: m3_per_s {init: 0, pub: out};
    var v_aov: m3_per_s {init: 0, pub: out};
    var v_svc: m3_per_s {pub: in};
    var v_ivc: m3_per_s {pub: in};
    var v_pvn: m3_per_s {pub: in};
    var L_trv: dimensionless;
    var L_puv: dimensionless;
    var L_miv: dimensionless;
    var L_aov: dimensionless;
    var A_eff_trv: m2;
    var A_eff_puv: m2;
    var A_eff_miv: m2;
    var A_eff_aov: m2;
    var A_nn_trv: m2 {pub: in};
    var A_nn_puv: m2 {pub: in};
    var A_nn_miv: m2 {pub: in};
    var A_nn_aov: m2 {pub: in};
    var l_eff: metre {pub: in};
    var K_vo_trv: m3_per_Js {pub: in};
    var K_vo_puv: m3_per_Js {pub: in};
    var K_vo_miv: m3_per_Js {pub: in};
    var K_vo_aov: m3_per_Js {pub: in};
    var K_vc_trv: m3_per_Js {pub: in};
    var K_vc_puv: m3_per_Js {pub: in};
    var K_vc_miv: m3_per_Js {pub: in};
    var K_vc_aov: m3_per_Js {pub: in};
    var M_rg_trv: dimensionless {pub: in};
    var M_rg_puv: dimensionless {pub: in};
    var M_rg_miv: dimensionless {pub: in};
    var M_rg_aov: dimensionless {pub: in};
    var M_st_trv: dimensionless {pub: in};
    var M_st_puv: dimensionless {pub: in};
    var M_st_miv: dimensionless {pub: in};
    var M_st_aov: dimensionless {pub: in};
    var rho: Js2_per_m5 {pub: in};
    var B_trv: dimensionless;
    var B_puv: dimensionless;
    var B_miv: dimensionless;
    var B_aov: dimensionless;
    var zeta_trv: dimensionless;
    var zeta_puv: dimensionless;
    var zeta_miv: dimensionless;
    var zeta_aov: dimensionless;
    var zeta_trv_pre: dimensionless {init: 0};
    var zeta_puv_pre: dimensionless {init: 0};
    var zeta_miv_pre: dimensionless {init: 0};
    var zeta_aov_pre: dimensionless {init: 0};
    var eps: dimensionless {init: 1e-14};
    var eps_1: dimensionless {init: 0.07};
    var eps_2: dimensionless {init: 0.02};
    // TODO the below parameters should be set in an init_states parameter file
    // q_lv gets identified, the others are set arbitrarily, identifying q_lv sets the stressed volume of the system.
    var q_lv: m3 {init: 0.00069934};
    var q_rv: m3 {init: 1e-05};
    var q_la: m3 {init: 4e-06};
    var q_ra: m3 {init: 4e-06};
    // calculate modified time due to changes in heart period. This can now be modified throughout a simulation.
    var chi_a: dimensionless {init: 0.0};
    var chi_afloor: dimensionless;
    chi_afloor = chi_a-floor(chi_a);
    ode(chi_a, t) = sel
      case (mt >= t_astart_norm) and (mt <= t_astart_norm+eps_1) and (chi_afloor <= 0.5{dimensionless}):
        0.5{second}/T_ac;
      case (t_astart_norm+eps_1 > 1.0{dimensionless}) and (mt <= t_astart_norm+eps_1-1.0{dimensionless}) and (chi_afloor <= 0.5{dimensionless}):
        0.5{second}/T_ac;
      case (chi_afloor > eps_2) and (chi_afloor <= 0.5{dimensionless}):
        0.5{second}/T_ac;
      case chi_afloor >= 0.5{dimensionless}:
        0.5{second}/T_ar;
      otherwise:
        0{dimensionless};
    endsel;
    var chi_v: dimensionless {init: 0.0};
    var chi_vfloor: dimensionless;
    chi_vfloor = chi_v-floor(chi_v);
    ode(chi_v, t) = sel
      case (mt >= t_vstart_norm) and (mt <= t_vstart_norm+eps_1) and (chi_vfloor <= 0.5{dimensionless}):
        0.5{second}/T_vc;
      case (t_vstart_norm+eps_1 > 1.0{dimensionless}) and (mt <= t_vstart_norm+eps_1-1.0{dimensionless}) and (chi_vfloor <= 0.5{dimensionless}):
        0.5{second}/T_vc;
      case (chi_vfloor > eps_2) and (chi_vfloor <= 0.5{dimensionless}):
        0.5{second}/T_vc;
      case chi_vfloor > 0.5{dimensionless}:
        0.5{second}/T_vr;
      otherwise:
        0{dimensionless};
    endsel;
    ode(s, t) = 1{second}/T;
    mt = s-floor(s);
    // Elastance Functions
    t_astart_norm = t_astart/T;
    T_ac_norm = T_ac/T;
    T_ar_norm = T_vc/T;
    t_vstart_norm = t_vstart/T;
    T_vc_norm = T_vc/T;
    T_vr_norm = T_vr/T;
    e_a = 0.5{dimensionless}*(1{dimensionless}-cos(2{dimensionless}*pi*chi_afloor));
    e_v = 0.5{dimensionless}*(1{dimensionless}-cos(2{dimensionless}*pi*chi_vfloor));
    // Valve model
    B_trv = rho/(2{dimensionless}*sqr(A_eff_trv)+eps);
    B_puv = rho/(2{dimensionless}*sqr(A_eff_puv)+eps);
    B_miv = rho/(2{dimensionless}*sqr(A_eff_miv)+eps);
    B_aov = rho/(2{dimensionless}*sqr(A_eff_aov)+eps);
    L_trv = rho*l_eff/(A_eff_trv+eps);
    L_puv = rho*l_eff/(A_eff_puv+eps);
    L_miv = rho*l_eff/(A_eff_miv+eps);
    L_aov = rho*l_eff/(A_eff_aov+eps);
    A_eff_trv = (M_st_trv*A_nn_trv-M_rg_trv*A_nn_trv)*zeta_trv+M_rg_trv*A_nn_trv;
    A_eff_puv = (M_st_puv*A_nn_puv-M_rg_puv*A_nn_puv)*zeta_puv+M_rg_puv*A_nn_puv;
    A_eff_miv = (M_st_miv*A_nn_miv-M_rg_miv*A_nn_miv)*zeta_miv+M_rg_miv*A_nn_miv;
    A_eff_aov = (M_st_aov*A_nn_aov-M_rg_aov*A_nn_aov)*zeta_aov+M_rg_aov*A_nn_aov;
    ode(zeta_trv_pre, t) = sel
      case u_ra >= u_rv:
        (1{dimensionless}-zeta_trv_pre)*K_vo_trv*(u_ra-u_rv);
      otherwise:
        zeta_trv_pre*K_vc_trv*(u_ra-u_rv);
    endsel;
    ode(zeta_puv_pre, t) = sel
      case u_rv >= u_par:
        (1{dimensionless}-zeta_puv_pre)*K_vo_puv*(u_rv-u_par);
      otherwise:
        zeta_puv_pre*K_vc_puv*(u_rv-u_par);
    endsel;
    ode(zeta_miv_pre, t) = sel
      case u_la >= u_lv:
        (1{dimensionless}-zeta_miv_pre)*K_vo_miv*(u_la-u_lv);
      otherwise:
        zeta_miv_pre*K_vc_miv*(u_la-u_lv);
    endsel;
    ode(zeta_aov_pre, t) = sel
      case u_lv >= u_root:
        (1{dimensionless}-zeta_aov_pre)*K_vo_aov*(u_lv-u_root);
      otherwise:
        zeta_aov_pre*K_vc_aov*(u_lv-u_root);
    endsel;
    // The below ensures zeta can't be negative
    zeta_trv = max(zeta_trv_pre, 0{dimensionless});
    zeta_puv = max(zeta_puv_pre, 0{dimensionless});
    zeta_miv = max(zeta_miv_pre, 0{dimensionless});
    zeta_aov = max(zeta_aov_pre, 0{dimensionless});
    // calculate the flow through the valves
    ode(v_trv, t) = (-B_trv*v_trv*abs(v_trv)+u_ra-u_rv)/L_trv;
    ode(v_puv, t) = (-B_puv*v_puv*abs(v_puv)+u_rv-u_par)/L_puv;
    ode(v_miv, t) = (-B_miv*v_miv*abs(v_miv)+u_la-u_lv)/L_miv;
    ode(v_aov, t) = (-B_aov*v_aov*abs(v_aov)+u_lv-u_root)/L_aov;
    // Constitutive Relations
    u_ra = (e_a*E_ra_A+E_ra_B)*(q_ra-q_ra_0);
    u_rv = (e_v*E_rv_A+E_rv_B)*(q_rv-q_rv_0);
    u_la = (e_a*E_la_A+E_la_B)*(q_la-q_la_0);
    u_lv = (e_v*E_lv_A+E_lv_B)*(q_lv-q_lv_0);
    // Conservation Laws
    ode(q_ra, t) = v_svc+v_ivc-v_trv;
    ode(q_rv, t) = v_trv-v_puv;
    ode(q_la, t) = v_pvn-v_miv;
    ode(q_lv, t) = v_miv-v_aov;
  enddef;

  def comp heart_new_valve as
    var t: second {pub: in};
    var s: second {init: 0.0, pub: out};
    // Constitutive parameters
    var mt: second;
    var e_a: dimensionless;
    var e_v: dimensionless;
    var T: second {pub: in};
    var T_ac: second {pub: in};
    var T_ar: second {pub: in};
    var T_ac_norm: dimensionless;
    var T_ar_norm: dimensionless;
    var t_astart: second {pub: in};
    var t_astart_norm: dimensionless;
    var T_vc: second {pub: in};
    var T_vr: second {pub: in};
    var T_vc_norm: dimensionless;
    var T_vr_norm: dimensionless;
    var t_vstart: second {pub: in};
    var t_vstart_norm: dimensionless;
    var E_lv_A: J_per_m6 {pub: in};
    var E_lv_B: J_per_m6 {pub: in};
    var E_la_A: J_per_m6 {pub: in};
    var E_la_B: J_per_m6 {pub: in};
    var E_rv_A: J_per_m6 {pub: in};
    var E_rv_B: J_per_m6 {pub: in};
    var E_ra_A: J_per_m6 {pub: in};
    var E_ra_B: J_per_m6 {pub: in};
    var q_ra_0: m3 {pub: in};
    var q_rv_0: m3 {pub: in};
    var q_la_0: m3 {pub: in};
    var q_lv_0: m3 {pub: in};
    // State Variables
    var u_ra: J_per_m3 {pub: out};
    var u_rv: J_per_m3;
    var u_la: J_per_m3 {pub: out};
    var u_lv: J_per_m3;
    var u_root: J_per_m3 {pub: in};
    var u_par: J_per_m3 {pub: in};
    var v_trv: m3_per_s {init: 0, pub: out};
    var v_puv: m3_per_s {init: 0, pub: out};
    var v_miv: m3_per_s {init: 0, pub: out};
    var v_aov: m3_per_s {init: 0, pub: out};
    var v_svc: m3_per_s {pub: in};
    var v_ivc: m3_per_s {pub: in};
    var v_pvn: m3_per_s {pub: in};
    var L_trv: dimensionless;
    var L_puv: dimensionless;
    var L_miv: dimensionless;
    var L_aov: dimensionless;
    var A_eff_trv: m2;
    var A_eff_puv: m2;
    var A_eff_miv: m2;
    var A_eff_aov: m2;
    var A_nn_trv: m2 {pub: in};
    var A_nn_puv: m2 {pub: in};
    var A_nn_miv: m2 {pub: in};
    var A_nn_aov: m2 {pub: in};
    var l_eff: metre {pub: in};
    var K_vo_trv: m3_per_Js {pub: in};
    var K_vo_puv: m3_per_Js {pub: in};
    var K_vo_miv: m3_per_Js {pub: in};
    var K_vo_aov: m3_per_Js {pub: in};
    var K_vc_trv: m3_per_Js {pub: in};
    var K_vc_puv: m3_per_Js {pub: in};
    var K_vc_miv: m3_per_Js {pub: in};
    var K_vc_aov: m3_per_Js {pub: in};
    var M_rg_trv: dimensionless {pub: in};
    var M_rg_puv: dimensionless {pub: in};
    var M_rg_miv: dimensionless {pub: in};
    var M_rg_aov: dimensionless {pub: in};
    var M_st_trv: dimensionless {pub: in};
    var M_st_puv: dimensionless {pub: in};
    var M_st_miv: dimensionless {pub: in};
    var M_st_aov: dimensionless {pub: in};
    var rho: Js2_per_m5 {pub: in};
    var B_trv: dimensionless;
    var B_puv: dimensionless;
    var B_miv: dimensionless;
    var B_aov: dimensionless;
    var zeta_trv: dimensionless;
    var zeta_puv: dimensionless;
    var zeta_miv: dimensionless;
    var zeta_aov: dimensionless;
    var zeta_trv_pre: dimensionless {init: 0};
    var zeta_puv_pre: dimensionless {init: 0};
    var zeta_miv_pre: dimensionless {init: 0};
    var zeta_aov_pre: dimensionless {init: 0};
    var eps: dimensionless {init: 1e-14};
    var eps_1: dimensionless {init: 0.07};
    var eps_2: dimensionless {init: 0.02};
    // TODO the below parameters should be set in an init_states parameter file
    // q_lv gets identified, the others are set arbitrarily, identifying q_lv sets the stressed volume of the system.
    var q_lv: m3 {init: 0.00069934};
    var q_rv: m3 {init: 1e-05};
    var q_la: m3 {init: 4e-06};
    var q_ra: m3 {init: 4e-06};
    // calculate modified time due to changes in heart period. This can now be modified throughout a simulation.
    var chi_a: dimensionless {init: 0.0};
    var chi_afloor: dimensionless;
    chi_afloor = chi_a-floor(chi_a);
    ode(chi_a, t) = sel
      case (mt >= t_astart_norm) and (mt <= t_astart_norm+eps_1) and (chi_afloor <= 0.5{dimensionless}):
        0.5{second}/T_ac;
      case (t_astart_norm+eps_1 > 1.0{dimensionless}) and (mt <= t_astart_norm+eps_1-1.0{dimensionless}) and (chi_afloor <= 0.5{dimensionless}):
        0.5{second}/T_ac;
      case (chi_afloor > eps_2) and (chi_afloor <= 0.5{dimensionless}):
        0.5{second}/T_ac;
      case chi_afloor >= 0.5{dimensionless}:
        0.5{second}/T_ar;
      otherwise:
        0{dimensionless};
    endsel;
    var chi_v: dimensionless {init: 0.0};
    var chi_vfloor: dimensionless;
    chi_vfloor = chi_v-floor(chi_v);
    ode(chi_v, t) = sel
      case (mt >= t_vstart_norm) and (mt <= t_vstart_norm+eps_1) and (chi_vfloor <= 0.5{dimensionless}):
        0.5{second}/T_vc;
      case (t_vstart_norm+eps_1 > 1.0{dimensionless}) and (mt <= t_vstart_norm+eps_1-1.0{dimensionless}) and (chi_vfloor <= 0.5{dimensionless}):
        0.5{second}/T_vc;
      case (chi_vfloor > eps_2) and (chi_vfloor <= 0.5{dimensionless}):
        0.5{second}/T_vc;
      case chi_vfloor > 0.5{dimensionless}:
        0.5{second}/T_vr;
      otherwise:
        0{dimensionless};
    endsel;
    ode(s, t) = 1{second}/T;
    mt = s-floor(s);
    // Elastance Functions
    t_astart_norm = t_astart/T;
    T_ac_norm = T_ac/T;
    T_ar_norm = T_vc/T;
    t_vstart_norm = t_vstart/T;
    T_vc_norm = T_vc/T;
    T_vr_norm = T_vr/T;
    e_a = 0.5{dimensionless}*(1{dimensionless}-cos(2{dimensionless}*pi*chi_afloor));
    e_v = 0.5{dimensionless}*(1{dimensionless}-cos(2{dimensionless}*pi*chi_vfloor));
    // Valve model
    var Rmod_valve_trv: dimensionless {pub: in};
    var Rmod_valve_puv: dimensionless {pub: in};
    var Rmod_valve_aov: dimensionless {pub: in};
    var Rmod_valve_miv: dimensionless {pub: in};
    B_trv = Rmod_valve_trv*rho/(A_eff_trv+eps);
    B_puv = Rmod_valve_puv*rho/(A_eff_puv+eps);
    B_miv = Rmod_valve_miv*rho/(A_eff_miv+eps);
    B_aov = Rmod_valve_aov*rho/(A_eff_aov+eps);
    L_trv = rho*l_eff/(A_eff_trv+eps);
    L_puv = rho*l_eff/(A_eff_puv+eps);
    L_miv = rho*l_eff/(A_eff_miv+eps);
    L_aov = rho*l_eff/(A_eff_aov+eps);
    A_eff_trv = (M_st_trv*A_nn_trv-M_rg_trv*A_nn_trv)*zeta_trv+M_rg_trv*A_nn_trv;
    A_eff_puv = (M_st_puv*A_nn_puv-M_rg_puv*A_nn_puv)*zeta_puv+M_rg_puv*A_nn_puv;
    A_eff_miv = (M_st_miv*A_nn_miv-M_rg_miv*A_nn_miv)*zeta_miv+M_rg_miv*A_nn_miv;
    A_eff_aov = (M_st_aov*A_nn_aov-M_rg_aov*A_nn_aov)*zeta_aov+M_rg_aov*A_nn_aov;
    ode(zeta_trv_pre, t) = sel
      case u_ra >= u_rv:
        (1{dimensionless}-zeta_trv_pre)*K_vo_trv*(u_ra-u_rv);
      otherwise:
        zeta_trv_pre*K_vc_trv*(u_ra-u_rv);
    endsel;
    ode(zeta_puv_pre, t) = sel
      case u_rv >= u_par:
        (1{dimensionless}-zeta_puv_pre)*K_vo_puv*(u_rv-u_par);
      otherwise:
        zeta_puv_pre*K_vc_puv*(u_rv-u_par);
    endsel;
    ode(zeta_miv_pre, t) = sel
      case u_la >= u_lv:
        (1{dimensionless}-zeta_miv_pre)*K_vo_miv*(u_la-u_lv);
      otherwise:
        zeta_miv_pre*K_vc_miv*(u_la-u_lv);
    endsel;
    ode(zeta_aov_pre, t) = sel
      case u_lv >= u_root:
        (1{dimensionless}-zeta_aov_pre)*K_vo_aov*(u_lv-u_root);
      otherwise:
        zeta_aov_pre*K_vc_aov*(u_lv-u_root);
    endsel;
    // The below ensures zeta can't be negative
    zeta_trv = max(zeta_trv_pre, 0{dimensionless});
    zeta_puv = max(zeta_puv_pre, 0{dimensionless});
    zeta_miv = max(zeta_miv_pre, 0{dimensionless});
    zeta_aov = max(zeta_aov_pre, 0{dimensionless});
    // calculate the flow through the valves
    ode(v_trv, t) = (-B_trv*v_trv*abs(v_trv)+u_ra-u_rv)/L_trv;
    ode(v_puv, t) = (-B_puv*v_puv*abs(v_puv)+u_rv-u_par)/L_puv;
    ode(v_miv, t) = (-B_miv*v_miv*abs(v_miv)+u_la-u_lv)/L_miv;
    ode(v_aov, t) = (-B_aov*v_aov*abs(v_aov)+u_lv-u_root)/L_aov;
    // calculate velocities from flow and nominal (constant) area
    var vel_trv: m_per_s;
    var vel_puv: m_per_s;
    var vel_miv: m_per_s;
    var vel_aov: m_per_s;
    vel_trv = v_trv/A_nn_trv;
    vel_puv = v_puv/A_nn_puv;
    vel_miv = v_miv/A_nn_miv;
    vel_aov = v_aov/A_nn_aov;
    // Constitutive Relations
    u_ra = (e_a*E_ra_A+E_ra_B)*(q_ra-q_ra_0);
    u_rv = (e_v*E_rv_A+E_rv_B)*(q_rv-q_rv_0);
    u_la = (e_a*E_la_A+E_la_B)*(q_la-q_la_0);
    u_lv = (e_v*E_lv_A+E_lv_B)*(q_lv-q_lv_0);
    // Conservation Laws
    ode(q_ra, t) = v_svc+v_ivc-v_trv;
    ode(q_rv, t) = v_trv-v_puv;
    ode(q_la, t) = v_pvn-v_miv;
    ode(q_lv, t) = v_miv-v_aov;
  enddef;

  def comp heart_simple_LVprop as
    var t: second {pub: in};
    var s: second {init: 0.0, pub: out};
    // Constitutive parameters
    var mt: second;
    var e_a: dimensionless;
    var e_v: dimensionless;
    var T: second {pub: in};
    var T_ac: second {pub: in};
    var T_ar: second {pub: in};
    var T_ac_norm: dimensionless;
    var T_ar_norm: dimensionless;
    var t_astart: second {pub: in};
    var t_astart_norm: dimensionless;
    var T_vc: second {pub: in};
    var T_vr: second {pub: in};
    var T_vc_norm: dimensionless;
    var T_vr_norm: dimensionless;
    var t_vstart: second {pub: in};
    var t_vstart_norm: dimensionless;
    var E_lv_A: J_per_m6 {pub: in};
    var E_lv_B: J_per_m6 {pub: in};
    // removed in for all E
    var E_la_A: J_per_m6;
    var E_la_B: J_per_m6;
    var E_rv_A: J_per_m6;
    var E_rv_B: J_per_m6;
    var E_ra_A: J_per_m6;
    var E_ra_B: J_per_m6;
    var q_ra_0: m3 {pub: in};
    var q_rv_0: m3 {pub: in};
    var q_la_0: m3 {pub: in};
    var q_lv_0: m3 {pub: in};
    // State Variables
    var u_ra: J_per_m3 {pub: out};
    var u_rv: J_per_m3;
    var u_la: J_per_m3 {pub: out};
    var u_lv: J_per_m3;
    var u_root: J_per_m3 {pub: in};
    var u_par: J_per_m3 {pub: in};
    var v_trv: m3_per_s {init: 0, pub: out};
    var v_puv: m3_per_s {init: 0, pub: out};
    var v_miv: m3_per_s {init: 0, pub: out};
    var v_aov: m3_per_s {init: 0, pub: out};
    var v_svc: m3_per_s {pub: in};
    var v_ivc: m3_per_s {pub: in};
    var v_pvn: m3_per_s {pub: in};
    var L_trv: dimensionless;
    var L_puv: dimensionless;
    var L_miv: dimensionless;
    var L_aov: dimensionless;
    var A_eff_trv: m2;
    var A_eff_puv: m2;
    var A_eff_miv: m2;
    var A_eff_aov: m2;
    var A_nn_trv: m2 {pub: in};
    var A_nn_puv: m2 {pub: in};
    var A_nn_miv: m2 {pub: in};
    var A_nn_aov: m2 {pub: in};
    var l_eff: metre {pub: in};
    var K_vo_trv: m3_per_Js {pub: in};
    var K_vo_puv: m3_per_Js {pub: in};
    var K_vo_miv: m3_per_Js {pub: in};
    var K_vo_aov: m3_per_Js {pub: in};
    var K_vc_trv: m3_per_Js {pub: in};
    var K_vc_puv: m3_per_Js {pub: in};
    var K_vc_miv: m3_per_Js {pub: in};
    var K_vc_aov: m3_per_Js {pub: in};
    var M_rg_trv: dimensionless {pub: in};
    var M_rg_puv: dimensionless {pub: in};
    var M_rg_miv: dimensionless {pub: in};
    var M_rg_aov: dimensionless {pub: in};
    var M_st_trv: dimensionless {pub: in};
    var M_st_puv: dimensionless {pub: in};
    var M_st_miv: dimensionless {pub: in};
    var M_st_aov: dimensionless {pub: in};
    var rho: Js2_per_m5 {pub: in};
    var B_trv: dimensionless;
    var B_puv: dimensionless;
    var B_miv: dimensionless;
    var B_aov: dimensionless;
    var zeta_trv: dimensionless;
    var zeta_puv: dimensionless;
    var zeta_miv: dimensionless;
    var zeta_aov: dimensionless;
    var zeta_trv_pre: dimensionless {init: 0};
    var zeta_puv_pre: dimensionless {init: 0};
    var zeta_miv_pre: dimensionless {init: 0};
    var zeta_aov_pre: dimensionless {init: 0};
    var eps: dimensionless {init: 1e-14};
    var eps_1: dimensionless {init: 0.07};
    var eps_2: dimensionless {init: 0.02};
    // TODO the below parameters should be set in an init_states parameter file
    // q_lv gets identified, the others are set arbitrarily, identifying q_lv sets the stressed volume of the system.
    var q_lv: m3 {init: 1.5e-04};
    var q_rv: m3 {init: 1e-05};
    var q_la: m3 {init: 4e-06};
    var q_ra: m3 {init: 4e-06};
    // calculate modified time due to changes in heart period. This can now be modified throughout a simulation.
    var chi_a: dimensionless {init: 0.0};
    var chi_afloor: dimensionless;
    chi_afloor = chi_a-floor(chi_a);
    ode(chi_a, t) = sel
      case (mt >= t_astart_norm) and (mt <= t_astart_norm+eps_1) and (chi_afloor <= 0.5{dimensionless}):
        0.5{second}/T_ac;
      case (t_astart_norm+eps_1 > 1.0{dimensionless}) and (mt <= t_astart_norm+eps_1-1.0{dimensionless}) and (chi_afloor <= 0.5{dimensionless}):
        0.5{second}/T_ac;
      case (chi_afloor > eps_2) and (chi_afloor <= 0.5{dimensionless}):
        0.5{second}/T_ac;
      case chi_afloor >= 0.5{dimensionless}:
        0.5{second}/T_ar;
      otherwise:
        0{dimensionless};
    endsel;
    var chi_v: dimensionless {init: 0.0};
    var chi_vfloor: dimensionless;
    chi_vfloor = chi_v-floor(chi_v);
    ode(chi_v, t) = sel
      case (mt >= t_vstart_norm) and (mt <= t_vstart_norm+eps_1) and (chi_vfloor <= 0.5{dimensionless}):
        0.5{second}/T_vc;
      case (t_vstart_norm+eps_1 > 1.0{dimensionless}) and (mt <= t_vstart_norm+eps_1-1.0{dimensionless}) and (chi_vfloor <= 0.5{dimensionless}):
        0.5{second}/T_vc;
      case (chi_vfloor > eps_2) and (chi_vfloor <= 0.5{dimensionless}):
        0.5{second}/T_vc;
      case chi_vfloor > 0.5{dimensionless}:
        0.5{second}/T_vr;
      otherwise:
        0{dimensionless};
    endsel;
    ode(s, t) = 1{second}/T;
    mt = s-floor(s);
    // Elastance Functions
    t_astart_norm = t_astart/T;
    T_ac_norm = T_ac/T;
    T_ar_norm = T_vc/T;
    t_vstart_norm = t_vstart/T;
    T_vc_norm = T_vc/T;
    T_vr_norm = T_vr/T;
    e_a = 0.5{dimensionless}*(1{dimensionless}-cos(2{dimensionless}*pi*chi_afloor));
    e_v = 0.5{dimensionless}*(1{dimensionless}-cos(2{dimensionless}*pi*chi_vfloor));
    // Valve model
    B_trv = rho/(2{dimensionless}*sqr(A_eff_trv)+eps);
    B_puv = rho/(2{dimensionless}*sqr(A_eff_puv)+eps);
    B_miv = rho/(2{dimensionless}*sqr(A_eff_miv)+eps);
    B_aov = rho/(2{dimensionless}*sqr(A_eff_aov)+eps);
    L_trv = rho*l_eff/(A_eff_trv+eps);
    L_puv = rho*l_eff/(A_eff_puv+eps);
    L_miv = rho*l_eff/(A_eff_miv+eps);
    L_aov = rho*l_eff/(A_eff_aov+eps);
    A_eff_trv = (M_st_trv*A_nn_trv-M_rg_trv*A_nn_trv)*zeta_trv+M_rg_trv*A_nn_trv;
    A_eff_puv = (M_st_puv*A_nn_puv-M_rg_puv*A_nn_puv)*zeta_puv+M_rg_puv*A_nn_puv;
    A_eff_miv = (M_st_miv*A_nn_miv-M_rg_miv*A_nn_miv)*zeta_miv+M_rg_miv*A_nn_miv;
    A_eff_aov = (M_st_aov*A_nn_aov-M_rg_aov*A_nn_aov)*zeta_aov+M_rg_aov*A_nn_aov;
    ode(zeta_trv_pre, t) = sel
      case u_ra >= u_rv:
        (1{dimensionless}-zeta_trv_pre)*K_vo_trv*(u_ra-u_rv);
      otherwise:
        zeta_trv_pre*K_vc_trv*(u_ra-u_rv);
    endsel;
    ode(zeta_puv_pre, t) = sel
      case u_rv >= u_par:
        (1{dimensionless}-zeta_puv_pre)*K_vo_puv*(u_rv-u_par);
      otherwise:
        zeta_puv_pre*K_vc_puv*(u_rv-u_par);
    endsel;
    ode(zeta_miv_pre, t) = sel
      case u_la >= u_lv:
        (1{dimensionless}-zeta_miv_pre)*K_vo_miv*(u_la-u_lv);
      otherwise:
        zeta_miv_pre*K_vc_miv*(u_la-u_lv);
    endsel;
    ode(zeta_aov_pre, t) = sel
      case u_lv >= u_root:
        (1{dimensionless}-zeta_aov_pre)*K_vo_aov*(u_lv-u_root);
      otherwise:
        zeta_aov_pre*K_vc_aov*(u_lv-u_root);
    endsel;
    // The below ensures zeta can't be negative
    zeta_trv = max(zeta_trv_pre, 0{dimensionless});
    zeta_puv = max(zeta_puv_pre, 0{dimensionless});
    zeta_miv = max(zeta_miv_pre, 0{dimensionless});
    zeta_aov = max(zeta_aov_pre, 0{dimensionless});
    // calculate the flow through the valves
    ode(v_trv, t) = (-B_trv*v_trv*abs(v_trv)+u_ra-u_rv)/L_trv;
    ode(v_puv, t) = (-B_puv*v_puv*abs(v_puv)+u_rv-u_par)/L_puv;
    ode(v_miv, t) = (-B_miv*v_miv*abs(v_miv)+u_la-u_lv)/L_miv;
    ode(v_aov, t) = (-B_aov*v_aov*abs(v_aov)+u_lv-u_root)/L_aov;
    // calculate velocities from flow and nominal (constant) area
    var vel_trv: m_per_s;
    var vel_puv: m_per_s;
    var vel_miv: m_per_s;
    var vel_aov: m_per_s;
    vel_trv = v_trv/A_nn_trv;
    vel_puv = v_puv/A_nn_puv;
    vel_miv = v_miv/A_nn_miv;
    vel_aov = v_aov/A_nn_aov;
    // Constitutive Relations
    u_ra = (e_a*E_ra_A+E_ra_B)*(q_ra-q_ra_0);
    u_rv = (e_v*E_rv_A+E_rv_B)*(q_rv-q_rv_0);
    u_la = (e_a*E_la_A+E_la_B)*(q_la-q_la_0);
    u_lv = (e_v*E_lv_A+E_lv_B)*(q_lv-q_lv_0);
    // Identify LV elastances and scale all others in relation
    E_rv_A = E_lv_A*0.8{dimensionless};
    E_ra_A = E_lv_A*0.02{dimensionless};
    E_la_A = E_lv_A*0.02{dimensionless};
    E_la_B = E_lv_B*0.9{dimensionless};
    E_ra_B = E_lv_B*0.9{dimensionless};
    E_rv_B = E_lv_B*0.6{dimensionless};
    // Conservation Laws
    ode(q_ra, t) = v_svc+v_ivc-v_trv;
    ode(q_rv, t) = v_trv-v_puv;
    ode(q_la, t) = v_pvn-v_miv;
    ode(q_lv, t) = v_miv-v_aov;
  enddef;

  def comp constant_flow_BC_type as
    var t: second {pub: in};
    var P: J_per_m3 {pub: in};
    var v: m3_per_s {priv: in, pub: out};
  enddef;

  def comp constant_flow_2_BC_type as
    var t: second {pub: in};
    var v_1: m3_per_s {priv: in, pub: out};
    var v_2: m3_per_s {priv: in, pub: out};
  enddef;

  def comp constant_pressure_BC_type as
    var t: second {pub: in};
    var v: m3_per_s {pub: in};
    var P: J_per_m3 {priv: in, pub: out};
  enddef;

  def comp p_observer_type as
    var t: second {pub: in};
    var u: J_per_m3 {priv: in, pub: out};
    // var v_out: m3_per_s {pub: out};
    // var u_out: J_per_m3 {pub: out};
    // v_out = v_in;
    // u_out = u_in;
  enddef;

  def comp f_observer_type as
    var t: second {pub: in};
    var v: m3_per_s {priv: in, pub: out};
    // var v_out: m3_per_s {pub: out};
    // var u_out: J_per_m3 {pub: out};
    // v_out = v_in;
    // u_out = u_in;
  enddef;

  def comp controller_type as
    var t: second {pub: in};
    // Constitutive parameters
    var I_T: Js2_per_m6 {pub: out};
    var R_v: Js_per_m6 {pub: out};
    var R_T: Js_per_m6 {pub: out};
    var C_T: m6_per_J {pub: in};
    // State Variables
    var v: m3_per_s {init: 0.0, pub: out};
    var u_in: J_per_m3 {pub: in};
    var u: J_per_m3 {pub: out};
    var u_C: J_per_m3 {pub: out};
    // v_T is the output flow to the venous side
    var v_T: m3_per_s {init: 0.0, pub: out};
    var u_out: J_per_m3 {pub: out};
    var q_T: m3 {init: 0.0, pub: out};
    var R_T_wCont: Js_per_m6 {pub: out};
    var error_flow_percent: dimensionless {pub: out};
    var u_a: J_per_m3 {pub: in};
    var v_a: m3_per_s {pub: in};
    var meanflow_4dflow: m3_per_s {pub: in};
    var BFF_ASL: dimensionless {pub: in};
    var pressure_d: J_per_m3 {pub: in};
    var error: J_per_m3 {pub: out};
    var check: dimensionless {pub: out};
    var x1: dimensionless;
    var x2: dimensionless;
    var x3: dimensionless;
    var u2: dimensionless;
    var u5: dimensionless;
    var u8: dimensionless;
    var aa2: dimensionless {init: 100};
    var cc2: dimensionless {init: 100};
    var aa5: dimensionless {init: 100};
    var cc5: dimensionless {init: 100};
    var aa8: dimensionless {init: 100, pub: out};
    var cc8: dimensionless {init: 100};
    var learning_rate: dimensionless {init: 1e6};
    var K_a: dimensionless {init: 0.001};
    var critic: dimensionless {pub: out};
    var r_a: dimensionless {pub: out};
    // Conservation Laws
    r_a = BFF_ASL-v_a/meanflow_4dflow;
    error = pressure_d-u_a;
    critic = +1e-6{dimensionless}*error*sqr(v/1e-4{dimensionless});
    x1 = 1{dimensionless}/(1{dimensionless}+exp((-error+1e0{dimensionless})/0.01{dimensionless}));
    x2 = exp(-sqr(error/1e0{dimensionless}));
    x3 = 1{dimensionless}/(1{dimensionless}+exp((error+1e0{dimensionless})/0.01{dimensionless}));
    u2 = x1/(x1+x2+x3);
    u5 = x2/(x1+x2+x3);
    u8 = x3/(x1+x2+x3);
    ode(aa2, t) = learning_rate*(critic-K_a*r_a)*u2*error;
    ode(cc2, t) = learning_rate*(critic-K_a*r_a)*u2;
    ode(aa5, t) = learning_rate*(critic-K_a*r_a)*u5*error;
    ode(cc5, t) = learning_rate*(critic-K_a*r_a)*u5;
    ode(aa8, t) = learning_rate*(critic-K_a*r_a)*u8*error;
    ode(cc8, t) = learning_rate*(critic-K_a*r_a)*u8;
    check = u2*(aa2*error+cc2)+u5*(aa5*error+cc5)+u8*(aa8*error+cc8);
    R_T = sel
      case check <= 0{dimensionless}:
        1{dimensionless};
      case (check > 0{dimensionless}) and (check <= 1e13{dimensionless}):
        check;
      case check > 1e13{dimensionless}:
        1e13{dimensionless};
    endsel;
    error_flow_percent = r_a*100{dimensionless};
    // Improve this R_v estimate?
    R_v = 0.01{second}/C_T;
    I_T = 1e-6{Js_per_m6};
    // Conservation Laws
    //  For now terminals don't have a gravity effect, change this for leg terminals
    // u_out = 0{J_per_m3};
    u_out = 0{dimensionless};
    ode(q_T, t) = v-v_T;
    u_C = q_T/C_T;
    u = u_C+R_v*(v-v_T);
    ode(v, t) = (u_in-u-v*R_T_wCont/2{dimensionless})/I_T;
    ode(v_T, t) = (u-u_out-v_T*R_T_wCont/2{dimensionless})/I_T;
    R_T_wCont = R_T;
  enddef;

  def comp controller2_type as
    var t: second {pub: in};
    // Constitutive parameters
    var I_T: Js2_per_m6 {pub: out};
    var R_v: Js_per_m6 {pub: out};
    var R_T: Js_per_m6 {pub: out};
    var C_T: m6_per_J {pub: in};
    // State Variables
    var v: m3_per_s {init: 0.0, pub: out};
    var u_in: J_per_m3 {pub: in};
    var u: J_per_m3 {pub: out};
    var u_C: J_per_m3 {pub: out};
    // v_T is the output flow to the venous side
    var v_T: m3_per_s {init: 0.0, pub: out};
    var u_out: J_per_m3 {pub: out};
    var q_T: m3 {init: 0.0, pub: out};
    var R_T_wCont: Js_per_m6 {pub: out};
    var error_flow_percent: Js_per_m6 {pub: out};
    var u_a: J_per_m3 {pub: in};
    var v_a: m3_per_s {pub: in};
    var meanflow_4dflow: m3_per_s {pub: in};
    var BFF_ASL: dimensionless {pub: in};
    var pressure_d: J_per_m3 {pub: in};
    var error: J_per_m3 {pub: out};
    var check: dimensionless {pub: out};
    var x1: dimensionless;
    var x2: dimensionless;
    var x3: dimensionless;
    var u2: dimensionless;
    var u5: dimensionless;
    var u8: dimensionless;
    var aa2: dimensionless {init: 100};
    var cc2: dimensionless {init: 100};
    var aa5: dimensionless {init: 100};
    var cc5: dimensionless {init: 100};
    var aa8: dimensionless {init: 100, pub: out};
    var cc8: dimensionless {init: 100};
    var learning_rate: dimensionless {init: 1e8};
    var K_a: dimensionless {init: 0.01};
    var critic: dimensionless {pub: out};
    var r_a: dimensionless {pub: out};
    // Conservation Laws
    r_a = BFF_ASL-v_a/meanflow_4dflow;
    error = pressure_d-u_a;
    critic = +1e-6{dimensionless}*error*sqr(v/1e-6{dimensionless});
    x1 = 1{dimensionless}/(1{dimensionless}+exp((-error+1e0{dimensionless})/0.01{dimensionless}));
    x2 = exp(-sqr(error/1e0{dimensionless}));
    x3 = 1{dimensionless}/(1{dimensionless}+exp((error+1e0{dimensionless})/0.01{dimensionless}));
    u2 = x1/(x1+x2+x3);
    u5 = x2/(x1+x2+x3);
    u8 = x3/(x1+x2+x3);
    ode(aa2, t) = learning_rate*(critic-K_a*r_a)*u2*error;
    ode(cc2, t) = learning_rate*(critic-K_a*r_a)*u2;
    ode(aa5, t) = learning_rate*(critic-K_a*r_a)*u5*error;
    ode(cc5, t) = learning_rate*(critic-K_a*r_a)*u5;
    ode(aa8, t) = learning_rate*(critic-K_a*r_a)*u8*error;
    ode(cc8, t) = learning_rate*(critic-K_a*r_a)*u8;
    check = u2*(aa2*error+cc2)+u5*(aa5*error+cc5)+u8*(aa8*error+cc8);
    R_T = sel
      case check <= 0{dimensionless}:
        1{dimensionless};
      case (check > 0{dimensionless}) and (check <= 1e13{dimensionless}):
        check;
      case check > 1e13{dimensionless}:
        1e13{dimensionless};
    endsel;
    error_flow_percent = r_a*100{dimensionless};
    // Improve this R_v estimate?
    R_v = 0.01{second}/C_T;
    I_T = 1e-6{Js_per_m6};
    // Conservation Laws
    //  For now terminals don't have a gravity effect, change this for leg terminals
    // u_out = 0{J_per_m3};
    u_out = 0{dimensionless};
    ode(q_T, t) = v-v_T;
    u_C = q_T/C_T;
    u = u_C+R_v*(v-v_T);
    ode(v, t) = (u_in-u-v*R_T_wCont/2{dimensionless})/I_T;
    ode(v_T, t) = (u-u_out-v_T*R_T_wCont/2{dimensionless})/I_T;
    R_T_wCont = R_T;
  enddef;
  // //////////////////////////////////////////////////////////////////////////////////////////////////////
  // /////////////////////////////////////////// non-BC Vessel ////////////////////////////////////////////
  // //////////////////////////////////////////////////////////////////////////////////////////////////////
  // //////////////////////////////////////////////////////////////////////////////////////////////////////////////////////////////////////////////////////////

  def comp simple_sensor_type as
    var t: second {pub: in};
    // Constitutive parameters
    // State Variables
    var u: J_per_m3 {priv: in, pub: out};
    var v: m3_per_s {priv: in, pub: out};
  enddef;

  def comp pv_type as
    var t: second {pub: in};
    // Constitutive parameters
    var mu: Js_per_m3 {pub: in};
    var rho: Js2_per_m5 {pub: in};
    var g: m_per_s2 {pub: in};
    var beta_g: dimensionless {pub: in};
    var theta: dimensionless {pub: in};
    var E: J_per_m3 {pub: in};
    var E_m: J_per_m3 {pub: out};
    var l: metre {pub: in};
    var length: metre {pub: out};
    var h: metre {pub: out};
    var thickness: metre {pub: out};
    var r: metre {pub: in};
    var radius: metre {pub: out};
    var I: Js2_per_m6 {pub: out};
    var C: m6_per_J {pub: out};
    var R: Js_per_m6 {pub: out};
    var R_v: Js_per_m6 {pub: out};
    var a_vessel: dimensionless {pub: in};
    var b_vessel: per_m {pub: in};
    var c_vessel: dimensionless {pub: in};
    var d_vessel: per_m {pub: in};
    // State Variables
    var u_in: J_per_m3 {pub: in};
    var v: m3_per_s {init: 0.0, pub: out};
    var u: J_per_m3 {pub: out};
    var u_C: J_per_m3 {pub: out};
    var v_out: m3_per_s {pub: in};
    var q_C: m3 {init: 0.0, pub: out};
    // Constitutive Relations
    h = r*(a_vessel*exp(b_vessel*r)+c_vessel*exp(d_vessel*r));
    I = rho*l/(pi*sqr(r));
    C = 2{dimensionless}*pi*pow(r, 3{dimensionless})*l/(E*h);
    R = 8{dimensionless}*mu*l/(pi*pow(r, 4{dimensionless}));
    R_v = 0.01{second}/C;
    length = l;
    E_m = E;
    radius = r;
    thickness = h;
    // Conservation Laws
    ode(v, t) = (u_in-u-R*v-beta_g*rho*g*l*cos(theta*pi/180{dimensionless}))/I;
    // ode(u_C, t) = (v-v_out)/C;
    ode(q_C, t) = v-v_out;
    u_C = q_C/C;
    // + u_ext;
    u = u_C+R_v*(v-v_out);
  enddef;
  // -----------------------------------------------------------------------------//
  // -----------------------------------------------------------------------------//

  def comp vp_type as
    var t: second {pub: in};
    // Constitutive parameters
    var mu: Js_per_m3 {pub: in};
    var rho: Js2_per_m5 {pub: in};
    var g: m_per_s2 {pub: in};
    var beta_g: dimensionless {pub: in};
    var theta: dimensionless {pub: in};
    var E: J_per_m3 {pub: in};
    var E_m: J_per_m3 {pub: out};
    var l: metre {pub: in};
    var length: metre {pub: out};
    var h: metre {pub: out};
    var thickness: metre {pub: out};
    var r: metre {pub: in};
    var radius: metre {pub: out};
    var I: Js2_per_m6 {pub: out};
    var C: m6_per_J {pub: out};
    var R: Js_per_m6 {pub: out};
    var R_v: Js_per_m6 {pub: out};
    var a_vessel: dimensionless {pub: in};
    var b_vessel: per_m {pub: in};
    var c_vessel: dimensionless {pub: in};
    var d_vessel: per_m {pub: in};
    // State Variables
    var v_in: m3_per_s {pub: in};
    var u: J_per_m3 {pub: out};
    var u_C: J_per_m3 {pub: out};
    var v: m3_per_s {init: 0.0, pub: out};
    var u_out: J_per_m3 {pub: in};
    var q_C: m3 {init: 0.0, pub: out};
    // Constitutive Relations
    h = r*(a_vessel*exp(b_vessel*r)+c_vessel*exp(d_vessel*r));
    I = rho*l/(pi*sqr(r));
    // C = 2{dimensionless}*pi*pow(r, 3{dimensionless})*l/(E*h);
    C = 2{dimensionless}*pi*pow(r, 3{dimensionless})*l/(E*h);
    R = 8{dimensionless}*mu*l/(pi*pow(r, 4{dimensionless}));
    R_v = 0.01{second}/C;
    length = l;
    E_m = E;
    radius = r;
    thickness = h;
    // Conservation Laws
    ode(v, t) = (u-u_out-R*v-beta_g*rho*g*l*cos(theta*pi/180{dimensionless}))/I;
    // ode(u_C, t) = (v_in-v)/C;
    ode(q_C, t) = v_in-v;
    u_C = q_C/C;
    u = u_C+R_v*(v_in-v);
  enddef;
  // -----------------------------------------------------------------------------//
  // -----------------------------------------------------------------------------//

  def comp pp_type as
    var t: second {pub: in};
    // Constitutive parameters
    var mu: Js_per_m3 {pub: in};
    var rho: Js2_per_m5 {pub: in};
    var g: m_per_s2 {pub: in};
    var beta_g: dimensionless {pub: in};
    var theta: dimensionless {pub: in};
    var E: J_per_m3 {pub: in};
    var E_m: J_per_m3 {pub: out};
    var l: metre {pub: in};
    var length: metre {pub: out};
    var h: metre {pub: out};
    var thickness: metre {pub: out};
    var r: metre {pub: in};
    var radius: metre {pub: out};
    var I: Js2_per_m6 {pub: out};
    var C: m6_per_J {pub: out};
    var R: Js_per_m6 {pub: out};
    var R_v: Js_per_m6 {pub: out};
    var a_vessel: dimensionless {pub: in};
    var b_vessel: per_m {pub: in};
    var c_vessel: dimensionless {pub: in};
    var d_vessel: per_m {pub: in};
    // State Variables
    var u_in: J_per_m3 {pub: in};
    var v: m3_per_s {init: 0.0, pub: out};
    var u: J_per_m3 {pub: out};
    var u_C: J_per_m3 {pub: out};
    var v_d: m3_per_s {init: 0.0, pub: out};
    var u_out: J_per_m3 {pub: in};
    var q_C: m3 {init: 0.0, pub: out};
    // Constitutive Relations
    h = r*(a_vessel*exp(b_vessel*r)+c_vessel*exp(d_vessel*r));
    I = rho*l/(pi*sqr(r));
    C = 2{dimensionless}*pi*pow(r, 3{dimensionless})*l/(E*h);
    R = 8{dimensionless}*mu*l/(pi*pow(r, 4{dimensionless}));
    R_v = 0.01{second}/C;
    length = l;
    E_m = E;
    radius = r;
    thickness = h;
    // Conservation Laws
    ode(v, t) = (u_in-u-R/2{dimensionless}*v-beta_g*rho*g*l*cos(theta*pi/180{dimensionless}))/(I/2{dimensionless});
    // ode(u_C, t) = (v-v_d)/C;
    ode(q_C, t) = v-v_d;
    u_C = q_C/C;
    u = u_C+R_v*(v-v_d);
    ode(v_d, t) = (u-u_out-R/2{dimensionless}*v_d)/(I/2{dimensionless});
  enddef;

  def comp vv_type as
    var t: second {pub: in};
    // Constitutive parameters
    var mu: Js_per_m3 {pub: in};
    var rho: Js2_per_m5 {pub: in};
    var g: m_per_s2 {pub: in};
    var beta_g: dimensionless {pub: in};
    var theta: dimensionless {pub: in};
    var E: J_per_m3 {pub: in};
    var E_m: J_per_m3 {pub: out};
    var l: metre {pub: in};
    var length: metre {pub: out};
    var h: metre {pub: out};
    var thickness: metre {pub: out};
    var r: metre {pub: in};
    var radius: metre {pub: out};
    var I: Js2_per_m6 {pub: out};
    var C: m6_per_J {pub: out};
    var R: Js_per_m6 {pub: out};
    var R_v: Js_per_m6 {pub: out};
    var a_vessel: dimensionless {pub: in};
    var b_vessel: per_m {pub: in};
    var c_vessel: dimensionless {pub: in};
    var d_vessel: per_m {pub: in};
    // State Variables
    var v_in: m3_per_s {pub: in};
    var u: J_per_m3 {pub: out};
    var u_C: J_per_m3 {pub: out};
    var v: m3_per_s {init: 0.0, pub: out};
    var u_d: J_per_m3 {pub: out};
    var u_C_d: J_per_m3 {pub: out};
    var v_out: m3_per_s {pub: in};
    var q_C: m3 {init: 0.0, pub: out};
    var q_C_d: m3 {init: 0.0, pub: out};
    // Constitutive Relations
    h = r*(a_vessel*exp(b_vessel*r)+c_vessel*exp(d_vessel*r));
    I = rho*l/(pi*sqr(r));
    C = 2{dimensionless}*pi*pow(r, 3{dimensionless})*l/(E*h);
    R = 8{dimensionless}*mu*l/(pi*pow(r, 4{dimensionless}));
    R_v = 0.01{second}/C;
    length = l;
    E_m = E;
    radius = r;
    thickness = h;
    // Conservation Laws
    ode(v, t) = (u-u_d-R*v-beta_g*rho*g*l*cos(theta*pi/180{dimensionless}))/I;
    // ode(u_C, t) = (v_in-v)/(C/2{dimensionless});
    ode(q_C, t) = v_in-v;
    u_C = q_C/(C/2{dimensionless});
    // ode(u_C_d, t) = (v-v_out)/(C/2{dimensionless});
    ode(q_C_d, t) = v-v_out;
    u_C_d = q_C_d/(C/2{dimensionless});
    u = u_C+2{dimensionless}*R_v*(v_in-v);
    u_d = u_C_d+2{dimensionless}*R_v*(v-v_out);
  enddef;

  def comp pp_simple_type as
    var t: second {pub: in};
    // Constitutive parameters
    var I: Js2_per_m6 {pub: in};
    var C: m6_per_J {pub: in};
    var R: Js_per_m6 {pub: in};
    var R_v: Js_per_m6 {pub: out};
    // State Variables
    var u_in: J_per_m3 {pub: in};
    var v: m3_per_s {init: 0.0, pub: out};
    var u: J_per_m3 {pub: out};
    var u_C: J_per_m3 {pub: out};
    var v_d: m3_per_s {init: 0.0, pub: out};
    var u_out: J_per_m3 {pub: in};
    var q_C: m3 {init: 0.0, pub: out};
    // Constitutive Relations
    R_v = 0.01{second}/C;
    // Conservation Laws
    ode(v, t) = (u_in-u-R/2{dimensionless}*v)/(I/2{dimensionless});
    // ode(u_C, t) = (v-v_d)/C;
    ode(q_C, t) = v-v_d;
    u_C = q_C/C;
    u = u_C+R_v*(v-v_d);
    ode(v_d, t) = (u-u_out-R/2{dimensionless}*v_d)/(I/2{dimensionless});
  enddef;

  def comp vv_simple_type as
    var t: second {pub: in};
    // Constitutive parameters
    var I: Js2_per_m6 {pub: in};
    var C: m6_per_J {pub: in};
    var R: Js_per_m6 {pub: in};
    var R_v: Js_per_m6 {pub: out};
    // State Variables
    var v_in: m3_per_s {pub: in};
    var u: J_per_m3 {pub: out};
    var u_C: J_per_m3 {pub: out};
    var v: m3_per_s {init: 0.0, pub: out};
    var u_d: J_per_m3 {pub: out};
    var u_C_d: J_per_m3 {pub: out};
    var v_out: m3_per_s {pub: in};
    var q_C: J_per_m3 {init: 0.0, pub: out};
    var q_C_d: J_per_m3 {init: 0.0, pub: out};
    var u_baroreceptor: J_per_m3 {init: 0.0, pub: out};
    var du_baroreceptor_dt: J_per_m3s {pub: out};
    // Constitutive Relations
    R_v = 0.01{second}/C;
    // Conservation Laws
    ode(v, t) = (u-u_d-R*v)/I;
    // ode(u_C, t) = (v_in-v)/(C/2{dimensionless});
    // ode(u_C_d, t) = (v-v_out)/(C/2{dimensionless});
    ode(q_C, t) = v_in-v;
    u_C = q_C/(C/2{dimensionless});
    ode(q_C_d, t) = v-v_out;
    du_baroreceptor_dt = (v-v_out)/(C/2{dimensionless});
    ode(u_baroreceptor, t) = du_baroreceptor_dt;
    u_C_d = q_C_d/(C/2{dimensionless});
    u = u_C+2{dimensionless}*R_v*(v_in-v);
    u_d = u_C_d+2{dimensionless}*R_v*(v-v_out);
  enddef;

  def comp pv_simple_type as
    var t: second {pub: in};
    // Constitutive parameters
    var I: Js2_per_m6 {pub: in};
    var C: m6_per_J {pub: in};
    var R: Js_per_m6 {pub: in};
    var R_v: Js_per_m6 {pub: out};
    // State Variables
    var u_in: J_per_m3 {pub: in};
    var v: m3_per_s {init: 0.0, pub: out};
    var u: J_per_m3 {pub: out};
    var u_C: J_per_m3 {pub: out};
    var v_out: m3_per_s {pub: in};
    var q_C: m3 {init: 0.0, pub: out};
    // Constitutive Relations
    R_v = 0.01{second}/C;
    // Conservation Laws
    ode(v, t) = (u_in-u-R*v)/I;
    // ode(u_C, t) = (v-v_out)/C;
    ode(q_C, t) = v-v_out;
    u_C = q_C/C;
    u = u_C+R_v*(v-v_out);
  enddef;

  def comp vp_simple_type as
    var t: second {pub: in};
    // Constitutive parameters
    var I: Js2_per_m6 {pub: in};
    var C: m6_per_J {pub: in};
    var R: Js_per_m6 {pub: in};
    var R_v: Js_per_m6 {pub: out};
    // State Variables
    var v_in: m3_per_s {pub: in};
    var u: J_per_m3 {pub: out};
    var q_C: J_per_m3 {init: 0.0, pub: out};
    var u_C: J_per_m3 {pub: out};
    var v: m3_per_s {init: 0.0, pub: out};
    var u_out: J_per_m3 {pub: in};
    // TODO double check that this applies to veins
    R_v = 0.01{second}/C;
    // Conservation Laws
    ode(v, t) = (u-u_out-R*v)/I;
    ode(q_C, t) = v_in-v;
    u_C = q_C/C;
    u = u_C+R_v*(v_in-v);
  enddef;
  // //////////////////////////////////////////////////////////////////////////////////////////////////////
  // ///////////////////////////////////////// output-BC Vessel ///////////////////////////////////////////
  // //////////////////////////////////////////////////////////////////////////////////////////////////////

  def comp pp_T_type as
    var t: second {pub: in};
    // Constitutive parameters
    var I_T: Js2_per_m6 {pub: out};
    var R_v: Js_per_m6 {pub: out};
    var R_T: Js_per_m6 {pub: in};
    var C_T: m6_per_J {pub: in};
    // State Variables
    var v: m3_per_s {init: 0.0, pub: out};
    var u_in: J_per_m3 {pub: in};
    var u: J_per_m3 {pub: out};
    var u_C: J_per_m3 {pub: out};
    // v_T is the output flow to the venous side
    var v_T: m3_per_s {init: 0.0, pub: out};
    var u_out: J_per_m3 {pub: in};
    var q_T: m3 {init: 0.0, pub: out};
    // Improve this R_v estimate?
    R_v = 0.01{second}/C_T;
    I_T = 1e-6{Js_per_m6};
    // Conservation Laws
    // For now terminals don't have a gravity effect, change this for leg terminals
    ode(q_T, t) = v-v_T;
    u_C = q_T/C_T;
    // + u_ext;
    u = u_C+R_v*(v-v_T);
    ode(v, t) = (u_in-u-v*R_T/2{dimensionless})/I_T;
    ode(v_T, t) = (u-u_out-v_T*R_T/2{dimensionless})/I_T;
  enddef;

  def comp pp_T_wCont_type as
    var t: second {pub: in};
    // Constitutive parameters
    var I_T: Js2_per_m6 {pub: in};
    var R_v: Js_per_m6 {pub: out};
    var R_T: Js_per_m6 {pub: in};
    var C_T: m6_per_J {pub: in};
    // State Variables
    var v: m3_per_s {init: 0.0, pub: out};
    var u_in: J_per_m3 {pub: in};
    var u: J_per_m3 {pub: out};
    var u_C: J_per_m3 {pub: out};
    // v_T is the output flow to the venous side
    var v_T: m3_per_s {init: 0.0, pub: out};
    var u_out: J_per_m3 {pub: in};
    var q_T: m3 {init: 0.0, pub: out};
    var R_T_wCont: Js_per_m6 {pub: out};
    var Delta_R: Js_per_m6 {pub: in};
    var R_local_multiplier: dimensionless {pub: in};
    // Improve this R_v estimate?
    R_v = 0.01{second}/C_T;
    // Conservation Laws
    // For now terminals don't have a gravity effect, change this for leg terminals
    ode(q_T, t) = v-v_T;
    u_C = q_T/C_T;
    u = u_C+R_v*(v-v_T);
    ode(v, t) = (u_in-u-v*R_T_wCont/2{dimensionless})/I_T;
    ode(v_T, t) = (u-u_out-v_T*R_T_wCont/2{dimensionless})/I_T;
    R_T_wCont = (R_T+Delta_R)*R_local_multiplier;
  enddef;
  // /////////////////////////////////////////////////////////////////////////////////////////////////////
  // //////////////////////////////////////////// Junctions //////////////////////////////////////////////
  // /////////////////////////////////////////////////////////////////////////////////////////////////////
  // Bifurcation

  def comp pv_split_type as
    var t: second {pub: in};
    // Constitutive parameters
    var mu: Js_per_m3 {pub: in};
    var rho: Js2_per_m5 {pub: in};
    var g: m_per_s2 {pub: in};
    var beta_g: dimensionless {pub: in};
    var theta: dimensionless {pub: in};
    var E: J_per_m3 {pub: in};
    var E_m: J_per_m3 {pub: out};
    var l: metre {pub: in};
    var length: metre {pub: out};
    var h: metre {pub: out};
    var thickness: metre {pub: out};
    var r: metre {pub: in};
    var radius: metre {pub: out};
    var I: Js2_per_m6 {pub: out};
    var C: m6_per_J {pub: out};
    var R: Js_per_m6 {pub: out};
    var R_v: Js_per_m6 {pub: out};
    var a_vessel: dimensionless {pub: in};
    var b_vessel: per_m {pub: in};
    var c_vessel: dimensionless {pub: in};
    var d_vessel: per_m {pub: in};
    // State Variables
    var u_in: J_per_m3 {pub: in};
    var v: m3_per_s {init: 0.0, pub: out};
    var u: J_per_m3 {pub: out};
    var u_C: J_per_m3 {init: 0.0, pub: out};
    var du_C_dt: J_per_m3s {pub: out};
    var v_out_1: m3_per_s {pub: in};
    var v_out_2: m3_per_s {pub: in};
    // Constitutive Relations
    h = r*(a_vessel*exp(b_vessel*r)+c_vessel*exp(d_vessel*r));
    I = rho*l/(pi*sqr(r));
    C = 2{dimensionless}*pi*pow(r, 3{dimensionless})*l/(E*h);
    R = 8{dimensionless}*mu*l/(pi*pow(r, 4{dimensionless}));
    R_v = 0.01{second}/C;
    length = l;
    E_m = E;
    radius = r;
    thickness = h;
    // Conservation Laws
    ode(v, t) = (u_in-u-R*v-beta_g*rho*g*l*cos(theta*pi/180{dimensionless}))/I;
    // The below assumes constant compliance
    du_C_dt = (v-v_out_1-v_out_2)/C;
    ode(u_C, t) = du_C_dt;
    u = u_C+R_v*(v-v_out_1-v_out_2);
  enddef;
  // -----------------------------------------------------------------------------//
  // -----------------------------------------------------------------------------//
  // 2 in 2 out junction

  def comp vv_2in2out_type as
    var t: second {pub: in};
    // Constitutive parameters
    var mu: Js_per_m3 {pub: in};
    var rho: Js2_per_m5 {pub: in};
    var g: m_per_s2 {pub: in};
    var beta_g: dimensionless {pub: in};
    var theta: dimensionless {pub: in};
    var E: J_per_m3 {pub: in};
    var E_m: J_per_m3 {pub: out};
    var l: metre {pub: in};
    var length: metre {pub: out};
    var h: metre {pub: out};
    var thickness: metre {pub: out};
    var r: metre {pub: in};
    var radius: metre {pub: out};
    var I: Js2_per_m6 {pub: out};
    var C: m6_per_J {pub: out};
    var R: Js_per_m6 {pub: out};
    var R_v: Js_per_m6 {pub: out};
    var a_vessel: dimensionless {pub: in};
    var b_vessel: per_m {pub: in};
    var c_vessel: dimensionless {pub: in};
    var d_vessel: per_m {pub: in};
    // State Variables
    var v_in_1: m3_per_s {pub: in};
    var v_in_2: m3_per_s {pub: in};
    var u: J_per_m3 {pub: out};
    var u_C: J_per_m3 {pub: out};
    var v: m3_per_s {init: 0.0, pub: out};
    var u_d: J_per_m3 {pub: out};
    var u_C_d: J_per_m3 {pub: out};
    var v_out_1: m3_per_s {pub: in};
    var v_out_2: m3_per_s {pub: in};
    var q_C: m3 {init: 0.0, pub: out};
    var q_C_d: m3 {init: 0.0, pub: out};
    // Constitutive Relations
    h = r*(a_vessel*exp(b_vessel*r)+c_vessel*exp(d_vessel*r));
    I = rho*l/(pi*sqr(r));
    C = 2{dimensionless}*pi*pow(r, 3{dimensionless})*l/(E*h);
    R = 8{dimensionless}*mu*l/(pi*pow(r, 4{dimensionless}));
    R_v = 0.01{second}/C;
    length = l;
    E_m = E;
    radius = r;
    thickness = h;
    // Conservation Laws
    ode(v, t) = (u-u_d-R*v-beta_g*rho*g*l*cos(theta*pi/180{dimensionless}))/I;
    // ode(u_C, t) = (v_in_1+v_in_2-v)/(C/2{dimensionless});
    // ode(u_C_d, t) = (v-v_out_1-v_out_2)/(C/2{dimensionless});
    ode(q_C, t) = v_in_1+v_in_2-v;
    u_C = q_C/(C/2{dimensionless});
    ode(q_C_d, t) = v-v_out_1-v_out_2;
    u_C_d = q_C_d/(C/2{dimensionless});
    u = u_C+2{dimensionless}*R_v*(v_in_1+v_in_2-v);
    u_d = u_C_d+2{dimensionless}*R_v*(v-v_out_1-v_out_2);
  enddef;
  // 2in1out merge vv

  def comp vv_merge_type as
    var t: second {pub: in};
    // Constitutive parameters
    var mu: Js_per_m3 {pub: in};
    var rho: Js2_per_m5 {pub: in};
    var g: m_per_s2 {pub: in};
    var beta_g: dimensionless {pub: in};
    var theta: dimensionless {pub: in};
    var E: J_per_m3 {pub: in};
    var E_m: J_per_m3 {pub: out};
    var l: metre {pub: in};
    var length: metre {pub: out};
    var h: metre {pub: out};
    var thickness: metre {pub: out};
    var r: metre {pub: in};
    var radius: metre {pub: out};
    var I: Js2_per_m6 {pub: out};
    var C: m6_per_J {pub: out};
    var R: Js_per_m6 {pub: out};
    var R_v: Js_per_m6 {pub: out};
    var a_vessel: dimensionless {pub: in};
    var b_vessel: per_m {pub: in};
    var c_vessel: dimensionless {pub: in};
    var d_vessel: per_m {pub: in};
    // State Variables
    var v_in_1: m3_per_s {pub: in};
    var v_in_2: m3_per_s {pub: in};
    var u: J_per_m3 {pub: out};
    var u_C: J_per_m3 {pub: out};
    var v: m3_per_s {init: 0.0, pub: out};
    var u_d: J_per_m3 {pub: out};
    var u_C_d: J_per_m3 {pub: out};
    var v_out: m3_per_s {pub: in};
    var q_C: m3 {init: 0.0, pub: out};
    var q_C_d: m3 {init: 0.0, pub: out};
    // Constitutive Relations
    h = r*(a_vessel*exp(b_vessel*r)+c_vessel*exp(d_vessel*r));
    I = rho*l/(pi*sqr(r));
    C = 2{dimensionless}*pi*pow(r, 3{dimensionless})*l/(E*h);
    R = 8{dimensionless}*mu*l/(pi*pow(r, 4{dimensionless}));
    R_v = 0.01{second}/C;
    length = l;
    E_m = E;
    radius = r;
    thickness = h;
    // Conservation Laws
    ode(v, t) = (u-u_d-R*v-beta_g*rho*g*l*cos(theta*pi/180{dimensionless}))/I;
    // ode(u_C, t) = (v_in_1+v_in_2-v)/(C/2{dimensionless});
    // ode(u_C_d, t) = (v-v_out)/(C/2{dimensionless});
    ode(q_C, t) = v_in_1+v_in_2-v;
    u_C = q_C/(C/2{dimensionless});
    ode(q_C_d, t) = v-v_out;
    u_C_d = q_C_d/(C/2{dimensionless});
    u = u_C+2{dimensionless}*R_v*(v_in_1+v_in_2-v);
    u_d = u_C_d+2{dimensionless}*R_v*(v-v_out);
  enddef;
  // 2in1out merge vp

  def comp vp_merge_type as
    var t: second {pub: in};
    // Constitutive parameters
    var mu: Js_per_m3 {pub: in};
    var rho: Js2_per_m5 {pub: in};
    var g: m_per_s2 {pub: in};
    var beta_g: dimensionless {pub: in};
    var theta: dimensionless {pub: in};
    var E: J_per_m3 {pub: in};
    var E_m: J_per_m3 {pub: out};
    var l: metre {pub: in};
    var length: metre {pub: out};
    var h: metre {pub: out};
    var thickness: metre {pub: out};
    var r: metre {pub: in};
    var radius: metre {pub: out};
    var I: Js2_per_m6 {pub: out};
    var C: m6_per_J {pub: out};
    var R: Js_per_m6 {pub: out};
    var R_v: Js_per_m6 {pub: out};
    var a_vessel: dimensionless {pub: in};
    var b_vessel: per_m {pub: in};
    var c_vessel: dimensionless {pub: in};
    var d_vessel: per_m {pub: in};
    // State Variables
    var v_in_1: m3_per_s {pub: in};
    var v_in_2: m3_per_s {pub: in};
    var u: J_per_m3 {pub: out};
    var u_C: J_per_m3 {pub: out};
    var v: m3_per_s {init: 0.0, pub: out};
    var u_out: J_per_m3 {pub: in};
    var q_C: m3 {init: 0.0, pub: out};
    // Constitutive Relations
    h = r*(a_vessel*exp(b_vessel*r)+c_vessel*exp(d_vessel*r));
    I = rho*l/(pi*sqr(r));
    C = 2{dimensionless}*pi*pow(r, 3{dimensionless})*l/(E*h);
    R = 8{dimensionless}*mu*l/(pi*pow(r, 4{dimensionless}));
    R_v = 0.01{second}/C;
    length = l;
    E_m = E;
    radius = r;
    thickness = h;
    // Conservation Laws
    ode(v, t) = (u-u_out-R*v-beta_g*rho*g*l*cos(theta*pi/180{dimensionless}))/I;
    // ode(u_C, t) = (v_in_1+v_in_2-v)/C;
    ode(q_C, t) = v_in_1+v_in_2-v;
    u_C = q_C/C;
    u = u_C+R_v*(v_in_1+v_in_2-v);
  enddef;

  def comp zero_flow as
    var v_zero: m3_per_s {pub: out};
    v_zero = 0{m3_per_s};
  enddef;

  def comp flow_sum_2_type as
    var t: second {pub: in};
    var v_1: m3_per_s {pub: in};
    var v_2: m3_per_s {pub: in};
    var v_total: m3_per_s {pub: out};
    v_total = v_1+v_2;
  enddef;
  // //////////////////////////////////////////////////////////////////////////////////////////////////////
  // ///////////// module baroreceptor firing rate from carotid and aortic arch pressures ///
  // //////////////////////////////////////////////////////////////////////////////////////////////////////

  def comp baroreceptor_type as
    var t: second {pub: in};
    var P_sys: J_per_m3 {pub: in};
    var P_baro: J_per_m3 {init: 0.0, pub: out};
    var f_ab: per_s {pub: out};
    var dP_sys_dt: J_per_m3s {pub: in};
    // Constants
    var P_nom: J_per_m3 {pub: in};
    var f_ab_min: per_s {pub: in};
    var f_ab_max: per_s {pub: in};
    var k_ab: J_per_m3 {pub: in};
    var tau_zb: second {pub: in};
    var tau_pb: second {pub: in};
    ode(P_baro, t) = (P_sys+tau_zb*dP_sys_dt-P_baro)/tau_pb;
    f_ab = (f_ab_min+f_ab_max*exp((P_baro-P_nom)/k_ab))/(1{dimensionless}+exp((P_baro-P_nom)/k_ab));
  enddef;

  def comp chemoreceptor_type as
    var t: second {pub: in};
    // inp variables
    var C_CO2_a: dimensionless {pub: in};
    var C_O2_a: dimensionless {pub: in};
    var dot_C_CO2_a: per_s {pub: in};
    // output variables
    var X_O2: dimensionless {pub: out};
    var phi_stat: per_s {pub: out};
    var phi_CO2_dyn: per_s {init: 0.0, pub: out};
    var f_c_stat: per_s {pub: out};
    var f_c_dyn: per_s {pub: out};
    var f_apc: per_s {pub: out};
    var phi_apc: per_s {init: 0.0, pub: out};
    var P_O2_a: J_per_m3 {pub: out};
    // Constants
    var AA: dimensionless {pub: in};
    var BB: dimensionless {pub: in};
    var C_CO2_a_nom: dimensionless {pub: in};
    var K_O2: dimensionless {pub: in};
    var K_CO2: per_s {pub: in};
    var K_stat: per_s {pub: in};
    var K_dyn: per_s {pub: in};
    var tau_cap: second {pub: in};
    var tau_CO2_cc_dyn: second {pub: in};
    // equations
    X_O2 = AA*(1{dimensionless}-S_O2_a)+BB;
    phi_stat = K_CO2*(C_CO2_a-C_CO2_a_nom)*K_O2*(1{dimensionless}-exp(-X_O2/K_O2));
    f_c_stat = sel
      case C_CO2_a >= C_CO2_a_nom:
        K_stat*(1{dimensionless}-exp(-phi_stat/K_stat));
      otherwise:
        0{per_s};
    endsel;
    ode(phi_CO2_dyn, t) = (dot_C_CO2_a*tau_CO2_cc_dyn-phi_CO2_dyn)/tau_cap;
    f_c_dyn = K_dyn*(1{dimensionless}-exp(-phi_CO2_dyn/K_dyn));
    ode(phi_apc, t) = (f_c_stat+f_c_dyn-phi_apc)/tau_cap;
    f_apc = max(phi_apc, 0{per_s});
    // Calculate saturation
    var C_O2_a_diss: dimensionless {pub: out};
    var S_O2_a: dimensionless {pub: out};
    var Hgb: kg_per_m3 {pub: in};
    // from inverted dissociation
    P_O2_a = r_1+sqrt(sqr(r_1)-s_1);
    // P_CO2_a = d_2*(1{dimensionless}+alpha_2*P_O2_p)/(1{dimensionless}+beta_2*P_O2_p);
    C_O2_a_diss = sel
      case C_O2_sat-Hgb*1.34e-3{m3_per_kg}-P_O2_a*0.003{dimensionless}/100{dimensionless} >= 0{dimensionless}:
        P_O2_a*0.003{dimensionless}/100{dimensionless};
      otherwise:
        C_O2_sat-Hgb*1.34e-3{m3_per_kg};
    endsel;
    S_O2_a = (C_O2_a-C_O2_a_diss)/(Hgb*1.34e-3{m3_per_kg});
    // ____________ inverted dissociation curve below here___________
    var k_1: J_per_m3 {pub: in};
    var k_2: J_per_m3 {pub: in};
    var h_1: dimensionless {pub: in};
    var h_2: dimensionless {pub: in};
    var d_1: J_per_m3 {pub: out};
    var d_2: J_per_m3 {pub: out};
    var r_1: J_per_m3 {pub: out};
    var r_2: J_per_m3 {pub: out};
    var s_1: J2_per_m6 {pub: out};
    var s_2: J2_per_m6 {pub: out};
    var alpha_1: m3_per_J {pub: in};
    var alpha_2: m3_per_J {pub: in};
    var beta_1: m3_per_J {pub: in};
    var beta_2: m3_per_J {pub: in};
    var C_O2_sat: dimensionless {pub: in};
    var C_CO2_sat: dimensionless {pub: in};
    d_1 = max(k_1*pow(C_O2_a/(C_O2_sat-C_O2_a), h_1), 0{J_per_m3});
    d_2 = max(k_2*pow(C_CO2_a/(C_CO2_sat-C_CO2_a), h_2), 0{J_per_m3});
    r_1 = -0.5{dimensionless}*(1{dimensionless}+beta_1*d_2-beta_2*d_1-alpha_1*alpha_2*d_1*d_2)/(beta_2+alpha_2*beta_1*d_2);
    r_2 = -0.5{dimensionless}*(1{dimensionless}+beta_2*d_1-beta_1*d_2-alpha_2*alpha_1*d_2*d_1)/(beta_1+alpha_1*beta_2*d_1);
    s_1 = -1{dimensionless}*(d_1+alpha_1*d_1*d_2)/(beta_2+alpha_2*beta_1*d_2);
    s_2 = -1{dimensionless}*(d_2+alpha_2*d_2*d_1)/(beta_1+alpha_1*beta_2*d_1);
  enddef;

  def comp afferent_to_vagal_efferent_type as
    var t: second {pub: in};
    // Constants
    var f_ev_0: per_s {pub: in};
    var f_ev_inf: per_s {pub: in};
    var f_ab_0: per_s {pub: in};
    var theta_v: per_s {pub: in};
    var W_cv: dimensionless {pub: in};
    // var W_pv: dimensionless {pub: in}; not yet including lung stretch receptor effects
    var k_ev: per_s {pub: in};
    // Variables
    var f_apc: per_s {pub: in};
    var f_ab: per_s {pub: in};
    // var f_ap: per_s {pub: in};
    var f_v: per_s {pub: out};
    f_v = (f_ev_0+f_ev_inf*exp((f_ab-f_ab_0)/k_ev))/(1{dimensionless}+exp((f_ab-f_ab_0)/k_ev))+W_cv*f_apc-theta_v;
    // + W_pv*f_ap
  enddef;

  def comp afferent_to_sympathetic_efferent_type as
    var t: second {pub: in};
    // Constants
    var f_es_0: per_s {pub: in};
    var f_es_inf: per_s {pub: in};
    var f_es_max: per_s {pub: in};
    var k_es: per_s {pub: in};
    // var theta_s: per_s {pub: in}; //currently ignoring CNS
    var W_bs: dimensionless {pub: in};
    var W_cs: dimensionless {pub: in};
    // var W_ps: dimensionless {pub: in}; not yet including lung stretch receptor effects
    // Variables
    var f_apc: per_s {pub: in};
    var f_ab: per_s {pub: in};
    // var f_ap: per_s {pub: in};
    var f_s_premax: per_s {pub: out};
    var f_s: per_s {pub: out};
    f_s_premax = f_es_inf+(f_es_0-f_es_inf)*exp(k_es*(W_bs*f_ab+W_cs*f_apc));
    // IGNORING CNS and LUNG STRETCH
    f_s = sel
      case f_s_premax <= f_es_max:
        f_s_premax;
      otherwise:
        f_es_max;
    endsel;
  enddef;

  def comp efferent_resistance_effector_type as
    var t: second {pub: in};
    // IMPORTANT: THIS MODULE ASSUMES NO DELAY CONSTANTS, WHICH IS DIFFERENT TO THE ORIGINAL PAPER, ALBANESE2016
    // Constants
    var G_theta: Js_per_m6 {pub: in};
    var f_es_min: per_s {pub: in};
    var tau_theta: second {pub: in};
    // Variables
    var f_s: per_s {pub: in};
    var Delta_theta: Js_per_m6 {init: 0.0, pub: out};
    var sigma_theta: Js_per_m6 {pub: out};
    // Equations
    sigma_theta = sel
      case f_s >= f_es_min:
        G_theta*ln(1{second}*(f_s-f_es_min+1{per_s}));
      otherwise:
        0{Js_per_m6};
    endsel;
    ode(Delta_theta, t) = (-Delta_theta+sigma_theta)/tau_theta;
  enddef;

  def comp efferent_heart_elastance_effector_type as
    var t: second {pub: in};
    // IMPORTANT: THIS MODULE ASSUMES NO DELAY CONSTANTS, WHICH IS DIFFERENT TO THE ORIGINAL PAPER, ALBANESE2016
    // Constants
    var G_theta: J_per_m6 {pub: in};
    var f_es_min: per_s {pub: in};
    var tau_theta: second {pub: in};
    // Variables
    var f_s: per_s {pub: in};
    var Delta_theta: J_per_m6 {init: 0.0, pub: out};
    var sigma_theta: J_per_m6 {pub: out};
    // Equations
    sigma_theta = sel
      case f_s >= f_es_min:
        G_theta*ln(1{second}*(f_s-f_es_min+1{per_s}));
      otherwise:
        0{J_per_m6};
    endsel;
    ode(Delta_theta, t) = (-Delta_theta+sigma_theta)/tau_theta;
  enddef;

  def comp efferent_heart_period_effector_type as
    var t: second {pub: in};
    // IMPORTANT: THIS MODULE ASSUMES NO DELAY CONSTANTS, WHICH IS DIFFERENT TO THE ORIGINAL PAPER, ALBANESE2016
    // Constants
    var G_Ts: second {pub: in};
    var G_Tv: second {pub: in};
    var f_es_min: per_s {pub: in};
    var tau_Ts: second {pub: in};
    var tau_Tv: second {pub: in};
    // Variables
    var f_s: per_s {pub: in};
    var f_v: per_s {pub: in};
    var Delta_Ts: second {init: 0.0, pub: out};
    var Delta_Tv: second {init: 0.0, pub: out};
    var Delta_T: second {pub: out};
    var sigma_Ts: second {pub: out};
    var sigma_Tv: second {pub: out};
    // Equations
    sigma_Ts = sel
      case f_s >= f_es_min:
        G_Ts*ln(1{second}*(f_s-f_es_min+1{per_s}));
      otherwise:
        0{second};
    endsel;
    ode(Delta_Ts, t) = (-Delta_Ts+sigma_Ts)/tau_Ts;
    sigma_Tv = G_Tv*f_v;
    // DELAY IGNORED
    ode(Delta_Tv, t) = (-Delta_Tv+sigma_Tv)/tau_Tv;
    Delta_T = Delta_Tv+Delta_Ts;
  enddef;

  def comp local_flow_control_muscle_type as
    var t: second {pub: in};
    var x_O2: dimensionless {init: 0.0, pub: out};
    var phi_P_CO2_a: dimensionless {pub: out};
    var x_CO2: dimensionless {init: 0.0, pub: out};
    var C_O2_a: dimensionless {pub: in};
    var C_CO2_a: dimensionless {pub: in};
    var C_O2_p: dimensionless {pub: in};
    var P_CO2_a: dimensionless {pub: out};
    var R_local_multiplier: dimensionless {pub: out};
    var P_O2_a: J_per_m3 {pub: out};
    // Constants
    var P_CO2_a_nom: J_per_m3 {pub: in};
    var k_CO2_m: J_per_m3 {pub: in};
    var C_O2_vm_nom: dimensionless {pub: in};
    var tau_O2: second {pub: in};
    var tau_CO2: second {pub: in};
    var g_O2_m: dimensionless {pub: in};
    ode(x_O2, t) = (-x_O2+C_O2_p-C_O2_vm_nom)/tau_O2;
    phi_P_CO2_a = (1{dimensionless}-exp((P_CO2_a-P_CO2_a_nom)/k_CO2_m))/(1{dimensionless}+exp((P_CO2_a-P_CO2_a_nom)/k_CO2_m));
    ode(x_CO2, t) = (-x_CO2+phi_P_CO2_a)/tau_CO2;
    R_local_multiplier = (1{dimensionless}+x_CO2)/(1{dimensionless}-g_O2_m*x_O2);
    // from inverted dissociation
    P_O2_a = r_1+sqrt(sqr(r_1)-s_1);
    P_CO2_a = d_2*(1{dimensionless}+alpha_2*P_O2_a)/(1{dimensionless}+beta_2*P_O2_a);
    var k_1: J_per_m3 {pub: in};
    var k_2: J_per_m3 {pub: in};
    var h_1: dimensionless {pub: in};
    var h_2: dimensionless {pub: in};
    var d_1: J_per_m3 {pub: out};
    var d_2: J_per_m3 {pub: out};
    var r_1: J_per_m3 {pub: out};
    var r_2: J_per_m3 {pub: out};
    var s_1: J2_per_m6 {pub: out};
    var s_2: J2_per_m6 {pub: out};
    var alpha_1: m3_per_J {pub: in};
    var alpha_2: m3_per_J {pub: in};
    var beta_1: m3_per_J {pub: in};
    var beta_2: m3_per_J {pub: in};
    var C_O2_sat: dimensionless {pub: in};
    var C_CO2_sat: dimensionless {pub: in};
    d_1 = max(k_1*pow(C_O2_a/(C_O2_sat-C_O2_a), h_1), 0{J_per_m3});
    d_2 = max(k_2*pow(C_CO2_a/(C_CO2_sat-C_CO2_a), h_2), 0{J_per_m3});
    r_1 = -0.5{dimensionless}*(1{dimensionless}+beta_1*d_2-beta_2*d_1-alpha_1*alpha_2*d_1*d_2)/(beta_2+alpha_2*beta_1*d_2);
    r_2 = -0.5{dimensionless}*(1{dimensionless}+beta_2*d_1-beta_1*d_2-alpha_2*alpha_1*d_2*d_1)/(beta_1+alpha_1*beta_2*d_1);
    s_1 = -1{dimensionless}*(d_1+alpha_1*d_1*d_2)/(beta_2+alpha_2*beta_1*d_2);
    s_2 = -1{dimensionless}*(d_2+alpha_2*d_2*d_1)/(beta_1+alpha_1*beta_2*d_1);
  enddef;

  def comp local_flow_control_brain_type as
    var t: second {pub: in};
    var x_O2: dimensionless {init: 0.0, pub: out};
    var phi_P_CO2_a: dimensionless {pub: out};
    var x_CO2: dimensionless {init: 0.0, pub: out};
    var C_O2_a: dimensionless {pub: in};
    var C_CO2_a: dimensionless {pub: in};
    var C_O2_p: dimensionless {pub: in};
    var P_CO2_a: dimensionless {pub: out};
    var R_local_multiplier: dimensionless {pub: out};
    var P_O2_a: J_per_m3 {pub: out};
    var G_p: dimensionless {pub: out};
    // Constants
    var P_CO2_a_nom: J_per_m3 {pub: in};
    var C_O2_vb_nom: dimensionless {pub: in};
    var tau_O2: second {pub: in};
    var tau_CO2: second {pub: in};
    var g_O2_b: dimensionless {pub: in};
    var A_b_lc: dimensionless {pub: in};
    var B_b_lc: dimensionless {pub: in};
    var C_b_lc: dimensionless {pub: in};
    var D_b_lc: dimensionless {pub: in};
    var G_pn: dimensionless {pub: in};
    ode(x_O2, t) = (-x_O2+C_O2_p-C_O2_vb_nom)/tau_O2;
    phi_P_CO2_a = (A_b_lc+B_b_lc/(1{dimensionless}+C_b_lc*exp(D_b_lc*ln(P_CO2_a))))/(A_b_lc+B_b_lc/(1{dimensionless}+C_b_lc*exp(D_b_lc*ln(P_CO2_a_nom))))-1{dimensionless};
    ode(x_CO2, t) = (-x_CO2+phi_P_CO2_a)/tau_CO2;
    G_p = G_pn*(1{dimensionless}-g_O2_b*x_O2+x_CO2);
    R_local_multiplier = 1{dimensionless}/G_p;
    // from inverted dissociation
    P_O2_a = r_1+sqrt(sqr(r_1)-s_1);
    P_CO2_a = d_2*(1{dimensionless}+alpha_2*P_O2_a)/(1{dimensionless}+beta_2*P_O2_a);
    var k_1: J_per_m3 {pub: in};
    var k_2: J_per_m3 {pub: in};
    var h_1: dimensionless {pub: in};
    var h_2: dimensionless {pub: in};
    var d_1: J_per_m3 {pub: out};
    var d_2: J_per_m3 {pub: out};
    var r_1: J_per_m3 {pub: out};
    var r_2: J_per_m3 {pub: out};
    var s_1: J2_per_m6 {pub: out};
    var s_2: J2_per_m6 {pub: out};
    var alpha_1: m3_per_J {pub: in};
    var alpha_2: m3_per_J {pub: in};
    var beta_1: m3_per_J {pub: in};
    var beta_2: m3_per_J {pub: in};
    var C_O2_sat: dimensionless {pub: in};
    var C_CO2_sat: dimensionless {pub: in};
    d_1 = max(k_1*pow(C_O2_a/(C_O2_sat-C_O2_a), h_1), 0{J_per_m3});
    d_2 = max(k_2*pow(C_CO2_a/(C_CO2_sat-C_CO2_a), h_2), 0{J_per_m3});
    r_1 = -0.5{dimensionless}*(1{dimensionless}+beta_1*d_2-beta_2*d_1-alpha_1*alpha_2*d_1*d_2)/(beta_2+alpha_2*beta_1*d_2);
    r_2 = -0.5{dimensionless}*(1{dimensionless}+beta_2*d_1-beta_1*d_2-alpha_2*alpha_1*d_2*d_1)/(beta_1+alpha_1*beta_2*d_1);
    s_1 = -1{dimensionless}*(d_1+alpha_1*d_1*d_2)/(beta_2+alpha_2*beta_1*d_2);
    s_2 = -1{dimensionless}*(d_2+alpha_2*d_2*d_1)/(beta_1+alpha_1*beta_2*d_1);
  enddef;
  // //////////////////////////////////////////////////////////////////////////////////////////////////////
  // /////////////module for simple O2 and CO2 calculation in a terminal ///
  // //////////////////////////////////////////////////////////////////////////////////////////////////////

  def comp tissue_GE_simple_type as
    var t: second {pub: in};
    // Constitutive parameters
    var q_0: m3 {pub: in};
    var v: m3_per_s {pub: in};
    var M_O2: m3_per_s {pub: in};
    var M_CO2: m3_per_s {pub: in};
    var C_O2_a: dimensionless {pub: in};
    var C_CO2_a: dimensionless {pub: in};
    var C_O2_p: dimensionless {init: 0.15, pub: out};
    var C_CO2_p: dimensionless {init: 0.38, pub: out};
    ode(C_O2_p, t) = (v*(C_O2_a-C_O2_p)+M_O2)/q_0;
    ode(C_CO2_p, t) = (v*(C_CO2_a-C_CO2_p)+M_CO2)/q_0;
  enddef;
  // //////////////////////////////////////////////////////////////////////////////////////////////////////
  // /////////////module for O2 and CO2 calculation in a pulmonary system///
  // //////////////////////////////////////////////////////////////////////////////////////////////////////

  def comp pulmonary_GE_type as
    var t: second {pub: in};
    // Constitutive parameters
    var q_0: m3 {pub: in};
    var v: m3_per_s {pub: in};
    var M_O2: m3_per_s {pub: out};
    var M_CO2: m3_per_s {pub: out};
    var C_O2_v: dimensionless {pub: in};
    var C_CO2_v: dimensionless {pub: in};
    var C_O2_p: dimensionless {init: 0.2, pub: out};
    var C_CO2_p: dimensionless {init: 0.34, pub: out};
    // New params
    var k_O2: m6_per_Js {pub: in};
    var k_CO2: m6_per_Js {pub: in};
    var P_O2_A: J_per_m3 {pub: in};
    var P_CO2_A: J_per_m3 {pub: in};
    var shunt_fraction: dimensionless {pub: in};
    // New vars
    var P_O2_p: J_per_m3 {pub: out};
    var P_CO2_p: J_per_m3 {pub: out};
    var C_O2_a: dimensionless {pub: out};
    var C_CO2_a: dimensionless {pub: out};
    var v_p: m3_per_s {pub: out};
    var v_sh: m3_per_s {pub: out};
    M_O2 = k_O2*(P_O2_A-P_O2_p);
    M_CO2 = k_CO2*(P_CO2_A-P_CO2_p);
    ode(C_O2_p, t) = (v_p*(C_O2_v-C_O2_p)+M_O2)/q_0;
    ode(C_CO2_p, t) = (v_p*(C_CO2_v-C_CO2_p)+M_CO2)/q_0;
    // from inverted dissociation
    P_O2_p = r_1+sqrt(sqr(r_1)-s_1);
    P_CO2_p = d_2*(1{dimensionless}+alpha_2*P_O2_p)/(1{dimensionless}+beta_2*P_O2_p);
    // flows from shunt todo model this??
    v_p = v*(1{dimensionless}-shunt_fraction);
    v_sh = v*shunt_fraction;
    // calculate arterial gas concentration due to pulmonary shunt
    C_O2_a = max((v_p*C_O2_p+v_sh*C_O2_v)/v, 0{m3_per_s});
    C_CO2_a = max((v_p*C_CO2_p+v_sh*C_CO2_v)/v, 0{m3_per_s});
    // ____________ inverted dissociation curve below here___________
    var k_1: J_per_m3 {pub: in};
    var k_2: J_per_m3 {pub: in};
    var h_1: dimensionless {pub: in};
    var h_2: dimensionless {pub: in};
    var d_1: J_per_m3 {pub: out};
    var d_2: J_per_m3 {pub: out};
    var r_1: J_per_m3 {pub: out};
    var r_2: J_per_m3 {pub: out};
    var s_1: J2_per_m6 {pub: out};
    var s_2: J2_per_m6 {pub: out};
    var alpha_1: m3_per_J {pub: in};
    var alpha_2: m3_per_J {pub: in};
    var beta_1: m3_per_J {pub: in};
    var beta_2: m3_per_J {pub: in};
    var C_O2_sat: dimensionless {pub: in};
    var C_CO2_sat: dimensionless {pub: in};
    d_1 = max(k_1*pow(C_O2_p/(C_O2_sat-C_O2_p), h_1), 0{J_per_m3});
    d_2 = max(k_2*pow(C_CO2_p/(C_CO2_sat-C_CO2_p), h_2), 0{J_per_m3});
    r_1 = -0.5{dimensionless}*(1{dimensionless}+beta_1*d_2-beta_2*d_1-alpha_1*alpha_2*d_1*d_2)/(beta_2+alpha_2*beta_1*d_2);
    r_2 = -0.5{dimensionless}*(1{dimensionless}+beta_2*d_1-beta_1*d_2-alpha_2*alpha_1*d_2*d_1)/(beta_1+alpha_1*beta_2*d_1);
    s_1 = -1{dimensionless}*(d_1+alpha_1*d_1*d_2)/(beta_2+alpha_2*beta_1*d_2);
    s_2 = -1{dimensionless}*(d_2+alpha_2*d_2*d_1)/(beta_1+alpha_1*beta_2*d_1);
  enddef;

  def comp gas_transport_simple_type as
    var t: second {pub: in};
    var C_O2_in: dimensionless {init: 0.18, pub: in};
    var C_CO2_in: dimensionless {init: 0.36, pub: in};
    var C_O2_out: dimensionless {init: 0.18, pub: out};
    var C_CO2_out: dimensionless {init: 0.36, pub: out};
    var dot_C_CO2_out: per_s {pub: out};
    var q_0: m3 {pub: in};
    var v: m3_per_s {pub: in};
    ode(C_O2_out, t) = v*(C_O2_in-C_O2_out)/q_0;
    dot_C_CO2_out = v*(C_CO2_in-C_CO2_out)/q_0;
    ode(C_CO2_out, t) = dot_C_CO2_out;
  enddef;

  def comp temp as
    C_O2_out = (v*C_O2_in+v*C_O2_out)/(v+v);
  enddef;
enddef;
