def model modules as
  // //////////////////////////////////////////////////////////////////////////////////////////////////////
  // /////////////////////////////////////////// non-BC Vessel ////////////////////////////////////////////
  // //////////////////////////////////////////////////////////////////////////////////////////////////////
  // //////////////////////////////////////////////////////////////////////////////////////////////////////////////////////////////////////////////////////////

  def comp simple_sensor_type as
    var t: second {pub: in};
    // Constitutive parameters
    // State Variables
    var u: J_per_m3 {priv: in, pub: out};
    var v: m3_per_s {priv: in, pub: out};
  enddef;

  def comp pv_type as
    var t: second {pub: in};
    // Constitutive parameters
    var mu: Js_per_m3 {pub: in};
    var rho: Js2_per_m5 {pub: in};
    var g: m_per_s2 {pub: in};
    var beta_g: dimensionless {pub: in};
    var theta: dimensionless {pub: in};
    var E: J_per_m3 {pub: in};
    var E_m: J_per_m3 {pub: out};
    var l: metre {pub: in};
    var length: metre {pub: out};
    var h: metre {pub: out};
    var thickness: metre {pub: out};
    var r: metre {pub: in};
    var radius: metre {pub: out};
    var I: Js2_per_m6 {pub: out};
    var C: m6_per_J {pub: out};
    var R: Js_per_m6 {pub: out};
    var R_v: Js_per_m6 {pub: out};
    var a_vessel: dimensionless {pub: in};
    var b_vessel: per_m {pub: in};
    var c_vessel: dimensionless {pub: in};
    var d_vessel: per_m {pub: in};
    // State Variables
    var u_in: J_per_m3 {pub: in};
    var v: m3_per_s {init: 0.0, pub: out};
    var u: J_per_m3 {pub: out};
    var u_C: J_per_m3 {pub: out};
    var v_out: m3_per_s {pub: in};
    var q_C: m3 {init: 0.0, pub: out};
    // Constitutive Relations
    h = r*(a_vessel*exp(b_vessel*r)+c_vessel*exp(d_vessel*r));
    I = rho*l/(pi*sqr(r));
    C = 2{dimensionless}*pi*pow(r, 3{dimensionless})*l/(E*h);
    R = 8{dimensionless}*mu*l/(pi*pow(r, 4{dimensionless}));
    R_v = 0.01{second}/C;
    length = l;
    E_m = E;
    radius = r;
    thickness = h;
    // Conservation Laws
    ode(v, t) = (u_in-u-R*v-beta_g*rho*g*l*cos(theta*pi/180{dimensionless}))/I;
    // ode(u_C, t) = (v-v_out)/C;
    ode(q_C, t) = v-v_out;
    u_C = q_C/C;
    // + u_ext;
    u = u_C+R_v*(v-v_out);
  enddef;
  // -----------------------------------------------------------------------------//
  // -----------------------------------------------------------------------------//

  def comp vp_type as
    var t: second {pub: in};
    // Constitutive parameters
    var mu: Js_per_m3 {pub: in};
    var rho: Js2_per_m5 {pub: in};
    var g: m_per_s2 {pub: in};
    var beta_g: dimensionless {pub: in};
    var theta: dimensionless {pub: in};
    var E: J_per_m3 {pub: in};
    var E_m: J_per_m3 {pub: out};
    var l: metre {pub: in};
    var length: metre {pub: out};
    var h: metre {pub: out};
    var thickness: metre {pub: out};
    var r: metre {pub: in};
    var radius: metre {pub: out};
    var I: Js2_per_m6 {pub: out};
    var C: m6_per_J {pub: out};
    var R: Js_per_m6 {pub: out};
    var R_v: Js_per_m6 {pub: out};
    var a_vessel: dimensionless {pub: in};
    var b_vessel: per_m {pub: in};
    var c_vessel: dimensionless {pub: in};
    var d_vessel: per_m {pub: in};
    // State Variables
    var v_in: m3_per_s {pub: in};
    var u: J_per_m3 {pub: out};
    var u_C: J_per_m3 {pub: out};
    var v: m3_per_s {init: 0.0, pub: out};
    var u_out: J_per_m3 {pub: in};
    var q_C: m3 {init: 0.0, pub: out};
    // Constitutive Relations
    h = r*(a_vessel*exp(b_vessel*r)+c_vessel*exp(d_vessel*r));
    I = rho*l/(pi*sqr(r));
    // C = 2{dimensionless}*pi*pow(r, 3{dimensionless})*l/(E*h);
    C = 2{dimensionless}*pi*pow(r, 3{dimensionless})*l/(E*h);
    R = 8{dimensionless}*mu*l/(pi*pow(r, 4{dimensionless}));
    R_v = 0.01{second}/C;
    length = l;
    E_m = E;
    radius = r;
    thickness = h;
    // Conservation Laws
    ode(v, t) = (u-u_out-R*v-beta_g*rho*g*l*cos(theta*pi/180{dimensionless}))/I;
    // ode(u_C, t) = (v_in-v)/C;
    ode(q_C, t) = v_in-v;
    u_C = q_C/C;
    u = u_C+R_v*(v_in-v);
  enddef;
  // -----------------------------------------------------------------------------//
  // -----------------------------------------------------------------------------//

  def comp pp_type as
    var t: second {pub: in};
    // Constitutive parameters
    var mu: Js_per_m3 {pub: in};
    var rho: Js2_per_m5 {pub: in};
    var g: m_per_s2 {pub: in};
    var beta_g: dimensionless {pub: in};
    var theta: dimensionless {pub: in};
    var E: J_per_m3 {pub: in};
    var E_m: J_per_m3 {pub: out};
    var l: metre {pub: in};
    var length: metre {pub: out};
    var h: metre {pub: out};
    var thickness: metre {pub: out};
    var r: metre {pub: in};
    var radius: metre {pub: out};
    var I: Js2_per_m6 {pub: out};
    var C: m6_per_J {pub: out};
    var R: Js_per_m6 {pub: out};
    var R_v: Js_per_m6 {pub: out};
    var a_vessel: dimensionless {pub: in};
    var b_vessel: per_m {pub: in};
    var c_vessel: dimensionless {pub: in};
    var d_vessel: per_m {pub: in};
    // State Variables
    var u_in: J_per_m3 {pub: in};
    var v: m3_per_s {init: 0.0, pub: out};
    var u: J_per_m3 {pub: out};
    var u_C: J_per_m3 {pub: out};
    var v_d: m3_per_s {init: 0.0, pub: out};
    var u_out: J_per_m3 {pub: in};
    var q_C: m3 {init: 0.0, pub: out};
    // Constitutive Relations
    h = r*(a_vessel*exp(b_vessel*r)+c_vessel*exp(d_vessel*r));
    I = rho*l/(pi*sqr(r));
    C = 2{dimensionless}*pi*pow(r, 3{dimensionless})*l/(E*h);
    R = 8{dimensionless}*mu*l/(pi*pow(r, 4{dimensionless}));
    R_v = 0.01{second}/C;
    length = l;
    E_m = E;
    radius = r;
    thickness = h;
    // Conservation Laws
    ode(v, t) = (u_in-u-R/2{dimensionless}*v-beta_g*rho*g*l*cos(theta*pi/180{dimensionless}))/(I/2{dimensionless});
    // ode(u_C, t) = (v-v_d)/C;
    ode(q_C, t) = v-v_d;
    u_C = q_C/C;
    u = u_C+R_v*(v-v_d);
    ode(v_d, t) = (u-u_out-R/2{dimensionless}*v_d)/(I/2{dimensionless});
  enddef;

  def comp vv_type as
    var t: second {pub: in};
    // Constitutive parameters
    var mu: Js_per_m3 {pub: in};
    var rho: Js2_per_m5 {pub: in};
    var g: m_per_s2 {pub: in};
    var beta_g: dimensionless {pub: in};
    var theta: dimensionless {pub: in};
    var E: J_per_m3 {pub: in};
    var E_m: J_per_m3 {pub: out};
    var l: metre {pub: in};
    var length: metre {pub: out};
    var h: metre {pub: out};
    var thickness: metre {pub: out};
    var r: metre {pub: in};
    var radius: metre {pub: out};
    var I: Js2_per_m6 {pub: out};
    var C: m6_per_J {pub: out};
    var R: Js_per_m6 {pub: out};
    var R_v: Js_per_m6 {pub: out};
    var a_vessel: dimensionless {pub: in};
    var b_vessel: per_m {pub: in};
    var c_vessel: dimensionless {pub: in};
    var d_vessel: per_m {pub: in};
    // State Variables
    var v_in: m3_per_s {pub: in};
    var u: J_per_m3 {pub: out};
    var u_C: J_per_m3 {pub: out};
    var v: m3_per_s {init: 0.0, pub: out};
    var u_d: J_per_m3 {pub: out};
    var u_C_d: J_per_m3 {pub: out};
    var v_out: m3_per_s {pub: in};
    var q_C: m3 {init: 0.0, pub: out};
    var q_C_d: m3 {init: 0.0, pub: out};
    // Constitutive Relations
    h = r*(a_vessel*exp(b_vessel*r)+c_vessel*exp(d_vessel*r));
    I = rho*l/(pi*sqr(r));
    C = 2{dimensionless}*pi*pow(r, 3{dimensionless})*l/(E*h);
    R = 8{dimensionless}*mu*l/(pi*pow(r, 4{dimensionless}));
    R_v = 0.01{second}/C;
    length = l;
    E_m = E;
    radius = r;
    thickness = h;
    // Conservation Laws
    ode(v, t) = (u-u_d-R*v-beta_g*rho*g*l*cos(theta*pi/180{dimensionless}))/I;
    // ode(u_C, t) = (v_in-v)/(C/2{dimensionless});
    ode(q_C, t) = v_in-v;
    u_C = q_C/(C/2{dimensionless});
    // ode(u_C_d, t) = (v-v_out)/(C/2{dimensionless});
    ode(q_C_d, t) = v-v_out;
    u_C_d = q_C_d/(C/2{dimensionless});
    u = u_C+2{dimensionless}*R_v*(v_in-v);
    u_d = u_C_d+2{dimensionless}*R_v*(v-v_out);
  enddef;

  def comp pp_simple_type as
    var t: second {pub: in};
    // Constitutive parameters
    var I: Js2_per_m6 {pub: in};
    var C: m6_per_J {pub: in};
    var R: Js_per_m6 {pub: in};
    var R_v: Js_per_m6 {pub: out};
    // State Variables
    var u_in: J_per_m3 {pub: in};
    var v: m3_per_s {init: 0.0, pub: out};
    var u: J_per_m3 {pub: out};
    var u_C: J_per_m3 {pub: out};
    var v_d: m3_per_s {init: 0.0, pub: out};
    var u_out: J_per_m3 {pub: in};
    var q_C: m3 {init: 0.0, pub: out};
    // Constitutive Relations
    R_v = 0.01{second}/C;
    // Conservation Laws
    ode(v, t) = (u_in-u-R/2{dimensionless}*v)/(I/2{dimensionless});
    // ode(u_C, t) = (v-v_d)/C;
    ode(q_C, t) = v-v_d;
    u_C = q_C/C;
    u = u_C+R_v*(v-v_d);
    ode(v_d, t) = (u-u_out-R/2{dimensionless}*v_d)/(I/2{dimensionless});
  enddef;

  def comp vv_simple_type as
    var t: second {pub: in};
    // Constitutive parameters
    var I: Js2_per_m6 {pub: in};
    var C: m6_per_J {pub: in};
    var R: Js_per_m6 {pub: in};
    var R_v: Js_per_m6 {pub: out};
    // State Variables
    var v_in: m3_per_s {pub: in};
    var u: J_per_m3 {pub: out};
    var u_C: J_per_m3 {pub: out};
    var v: m3_per_s {init: 0.0, pub: out};
    var u_d: J_per_m3 {pub: out};
    var u_C_d: J_per_m3 {pub: out};
    var v_out: m3_per_s {pub: in};
    var q_C: J_per_m3 {init: 0.0, pub: out};
    var q_C_d: J_per_m3 {init: 0.0, pub: out};
    var u_baroreceptor: J_per_m3 {init: 0.0, pub: out};
    var du_baroreceptor_dt: J_per_m3s {pub: out};
    // Constitutive Relations
    R_v = 0.01{second}/C;
    // Conservation Laws
    ode(v, t) = (u-u_d-R*v)/I;
    // ode(u_C, t) = (v_in-v)/(C/2{dimensionless});
    // ode(u_C_d, t) = (v-v_out)/(C/2{dimensionless});
    ode(q_C, t) = v_in-v;
    u_C = q_C/(C/2{dimensionless});
    ode(q_C_d, t) = v-v_out;
    du_baroreceptor_dt = (v-v_out)/(C/2{dimensionless});
    ode(u_baroreceptor, t) = du_baroreceptor_dt;
    u_C_d = q_C_d/(C/2{dimensionless});
    u = u_C+2{dimensionless}*R_v*(v_in-v);
    u_d = u_C_d+2{dimensionless}*R_v*(v-v_out);
  enddef;

  def comp pv_simple_type as
    var t: second {pub: in};
    // Constitutive parameters
    var I: Js2_per_m6 {pub: in};
    var C: m6_per_J {pub: in};
    var R: Js_per_m6 {pub: in};
    var R_v: Js_per_m6 {pub: out};
    // State Variables
    var u_in: J_per_m3 {pub: in};
    var v: m3_per_s {init: 0.0, pub: out};
    var u: J_per_m3 {pub: out};
    var u_C: J_per_m3 {pub: out};
    var v_out: m3_per_s {pub: in};
    var q_C: m3 {init: 0.0, pub: out};
    // Constitutive Relations
    R_v = 0.01{second}/C;
    // Conservation Laws
    ode(v, t) = (u_in-u-R*v)/I;
    // ode(u_C, t) = (v-v_out)/C;
    ode(q_C, t) = v-v_out;
    u_C = q_C/C;
    u = u_C+R_v*(v-v_out);
  enddef;

  def comp vp_simple_type as
    var t: second {pub: in};
    // Constitutive parameters
    var I: Js2_per_m6 {pub: in};
    var C: m6_per_J {pub: in};
    var R: Js_per_m6 {pub: in};
    var R_v: Js_per_m6 {pub: out};
    // State Variables
    var v_in: m3_per_s {pub: in};
    var u: J_per_m3 {pub: out};
    var q_C: J_per_m3 {init: 0.0, pub: out};
    var u_C: J_per_m3 {pub: out};
    var v: m3_per_s {init: 0.0, pub: out};
    var u_out: J_per_m3 {pub: in};
    // TODO double check that this applies to veins
    R_v = 0.01{second}/C;
    // Conservation Laws
    ode(v, t) = (u-u_out-R*v)/I;
    ode(q_C, t) = v_in-v;
    u_C = q_C/C;
    u = u_C+R_v*(v_in-v);
  enddef;
  // //////////////////////////////////////////////////////////////////////////////////////////////////////
  // ///////////////////////////////////////// output-BC Vessel ///////////////////////////////////////////
  // //////////////////////////////////////////////////////////////////////////////////////////////////////

  def comp pp_T_type as
    var t: second {pub: in};
    // Constitutive parameters
    var I_T: Js2_per_m6 {pub: out};
    var R_v: Js_per_m6 {pub: out};
    var R_T: Js_per_m6 {pub: in};
    var C_T: m6_per_J {pub: in};
    // State Variables
    var v: m3_per_s {init: 0.0, pub: out};
    var u_in: J_per_m3 {pub: in};
    var u: J_per_m3 {pub: out};
    var u_C: J_per_m3 {pub: out};
    // v_T is the output flow to the venous side
    var v_T: m3_per_s {init: 0.0, pub: out};
    var u_out: J_per_m3 {pub: in};
    var q_T: m3 {init: 0.0, pub: out};
    // Improve this R_v estimate?
    R_v = 0.01{second}/C_T;
    I_T = 1e-6{Js_per_m6};
    // Conservation Laws
    // For now terminals don't have a gravity effect, change this for leg terminals
    ode(q_T, t) = v-v_T;
    u_C = q_T/C_T;
    // + u_ext;
    u = u_C+R_v*(v-v_T);
    ode(v, t) = (u_in-u-v*R_T/2{dimensionless})/I_T;
    ode(v_T, t) = (u-u_out-v_T*R_T/2{dimensionless})/I_T;
  enddef;

  def comp pp_T_wCont_type as
    var t: second {pub: in};
    // Constitutive parameters
    var I_T: Js2_per_m6 {pub: in};
    var R_v: Js_per_m6 {pub: out};
    var R_T: Js_per_m6 {pub: in};
    var C_T: m6_per_J {pub: in};
    // State Variables
    var v: m3_per_s {init: 0.0, pub: out};
    var u_in: J_per_m3 {pub: in};
    var u: J_per_m3 {pub: out};
    var u_C: J_per_m3 {pub: out};
    // v_T is the output flow to the venous side
    var v_T: m3_per_s {init: 0.0, pub: out};
    var u_out: J_per_m3 {pub: in};
    var q_T: m3 {init: 0.0, pub: out};
    var R_T_wCont: Js_per_m6 {pub: out};
    var Delta_R: Js_per_m6 {pub: in};
    var R_local_multiplier: dimensionless {pub: in};
    // Improve this R_v estimate?
    R_v = 0.01{second}/C_T;
    // Conservation Laws
    // For now terminals don't have a gravity effect, change this for leg terminals
    ode(q_T, t) = v-v_T;
    u_C = q_T/C_T;
    u = u_C+R_v*(v-v_T);
    ode(v, t) = (u_in-u-v*R_T_wCont/2{dimensionless})/I_T;
    ode(v_T, t) = (u-u_out-v_T*R_T_wCont/2{dimensionless})/I_T;
    R_T_wCont = (R_T+Delta_R)*R_local_multiplier;
  enddef;
  // /////////////////////////////////////////////////////////////////////////////////////////////////////
  // //////////////////////////////////////////// Junctions //////////////////////////////////////////////
  // /////////////////////////////////////////////////////////////////////////////////////////////////////
  // Bifurcation

  def comp pv_split_type as
    var t: second {pub: in};
    // Constitutive parameters
    var mu: Js_per_m3 {pub: in};
    var rho: Js2_per_m5 {pub: in};
    var g: m_per_s2 {pub: in};
    var beta_g: dimensionless {pub: in};
    var theta: dimensionless {pub: in};
    var E: J_per_m3 {pub: in};
    var E_m: J_per_m3 {pub: out};
    var l: metre {pub: in};
    var length: metre {pub: out};
    var h: metre {pub: out};
    var thickness: metre {pub: out};
    var r: metre {pub: in};
    var radius: metre {pub: out};
    var I: Js2_per_m6 {pub: out};
    var C: m6_per_J {pub: out};
    var R: Js_per_m6 {pub: out};
    var R_v: Js_per_m6 {pub: out};
    var a_vessel: dimensionless {pub: in};
    var b_vessel: per_m {pub: in};
    var c_vessel: dimensionless {pub: in};
    var d_vessel: per_m {pub: in};
    // State Variables
    var u_in: J_per_m3 {pub: in};
    var v: m3_per_s {init: 0.0, pub: out};
    var u: J_per_m3 {pub: out};
    var u_C: J_per_m3 {init: 0.0, pub: out};
    var du_C_dt: J_per_m3s {pub: out};
    var v_out_1: m3_per_s {pub: in};
    var v_out_2: m3_per_s {pub: in};
    // Constitutive Relations
    h = r*(a_vessel*exp(b_vessel*r)+c_vessel*exp(d_vessel*r));
    I = rho*l/(pi*sqr(r));
    C = 2{dimensionless}*pi*pow(r, 3{dimensionless})*l/(E*h);
    R = 8{dimensionless}*mu*l/(pi*pow(r, 4{dimensionless}));
    R_v = 0.01{second}/C;
    length = l;
    E_m = E;
    radius = r;
    thickness = h;
    // Conservation Laws
    ode(v, t) = (u_in-u-R*v-beta_g*rho*g*l*cos(theta*pi/180{dimensionless}))/I;
    // The below assumes constant compliance
    du_C_dt = (v-v_out_1-v_out_2)/C;
    ode(u_C, t) = du_C_dt;
    u = u_C+R_v*(v-v_out_1-v_out_2);
  enddef;
  // -----------------------------------------------------------------------------//
  // -----------------------------------------------------------------------------//
  // 2 in 2 out junction

  def comp vv_2in2out_type as
    var t: second {pub: in};
    // Constitutive parameters
    var mu: Js_per_m3 {pub: in};
    var rho: Js2_per_m5 {pub: in};
    var g: m_per_s2 {pub: in};
    var beta_g: dimensionless {pub: in};
    var theta: dimensionless {pub: in};
    var E: J_per_m3 {pub: in};
    var E_m: J_per_m3 {pub: out};
    var l: metre {pub: in};
    var length: metre {pub: out};
    var h: metre {pub: out};
    var thickness: metre {pub: out};
    var r: metre {pub: in};
    var radius: metre {pub: out};
    var I: Js2_per_m6 {pub: out};
    var C: m6_per_J {pub: out};
    var R: Js_per_m6 {pub: out};
    var R_v: Js_per_m6 {pub: out};
    var a_vessel: dimensionless {pub: in};
    var b_vessel: per_m {pub: in};
    var c_vessel: dimensionless {pub: in};
    var d_vessel: per_m {pub: in};
    // State Variables
    var v_in_1: m3_per_s {pub: in};
    var v_in_2: m3_per_s {pub: in};
    var u: J_per_m3 {pub: out};
    var u_C: J_per_m3 {pub: out};
    var v: m3_per_s {init: 0.0, pub: out};
    var u_d: J_per_m3 {pub: out};
    var u_C_d: J_per_m3 {pub: out};
    var v_out_1: m3_per_s {pub: in};
    var v_out_2: m3_per_s {pub: in};
    var q_C: m3 {init: 0.0, pub: out};
    var q_C_d: m3 {init: 0.0, pub: out};
    // Constitutive Relations
    h = r*(a_vessel*exp(b_vessel*r)+c_vessel*exp(d_vessel*r));
    I = rho*l/(pi*sqr(r));
    C = 2{dimensionless}*pi*pow(r, 3{dimensionless})*l/(E*h);
    R = 8{dimensionless}*mu*l/(pi*pow(r, 4{dimensionless}));
    R_v = 0.01{second}/C;
    length = l;
    E_m = E;
    radius = r;
    thickness = h;
    // Conservation Laws
    ode(v, t) = (u-u_d-R*v-beta_g*rho*g*l*cos(theta*pi/180{dimensionless}))/I;
    // ode(u_C, t) = (v_in_1+v_in_2-v)/(C/2{dimensionless});
    // ode(u_C_d, t) = (v-v_out_1-v_out_2)/(C/2{dimensionless});
    ode(q_C, t) = v_in_1+v_in_2-v;
    u_C = q_C/(C/2{dimensionless});
    ode(q_C_d, t) = v-v_out_1-v_out_2;
    u_C_d = q_C_d/(C/2{dimensionless});
    u = u_C+2{dimensionless}*R_v*(v_in_1+v_in_2-v);
    u_d = u_C_d+2{dimensionless}*R_v*(v-v_out_1-v_out_2);
  enddef;
  // 2in1out merge vv

  def comp vv_merge_type as
    var t: second {pub: in};
    // Constitutive parameters
    var mu: Js_per_m3 {pub: in};
    var rho: Js2_per_m5 {pub: in};
    var g: m_per_s2 {pub: in};
    var beta_g: dimensionless {pub: in};
    var theta: dimensionless {pub: in};
    var E: J_per_m3 {pub: in};
    var E_m: J_per_m3 {pub: out};
    var l: metre {pub: in};
    var length: metre {pub: out};
    var h: metre {pub: out};
    var thickness: metre {pub: out};
    var r: metre {pub: in};
    var radius: metre {pub: out};
    var I: Js2_per_m6 {pub: out};
    var C: m6_per_J {pub: out};
    var R: Js_per_m6 {pub: out};
    var R_v: Js_per_m6 {pub: out};
    var a_vessel: dimensionless {pub: in};
    var b_vessel: per_m {pub: in};
    var c_vessel: dimensionless {pub: in};
    var d_vessel: per_m {pub: in};
    // State Variables
    var v_in_1: m3_per_s {pub: in};
    var v_in_2: m3_per_s {pub: in};
    var u: J_per_m3 {pub: out};
    var u_C: J_per_m3 {pub: out};
    var v: m3_per_s {init: 0.0, pub: out};
    var u_d: J_per_m3 {pub: out};
    var u_C_d: J_per_m3 {pub: out};
    var v_out: m3_per_s {pub: in};
    var q_C: m3 {init: 0.0, pub: out};
    var q_C_d: m3 {init: 0.0, pub: out};
    // Constitutive Relations
    h = r*(a_vessel*exp(b_vessel*r)+c_vessel*exp(d_vessel*r));
    I = rho*l/(pi*sqr(r));
    C = 2{dimensionless}*pi*pow(r, 3{dimensionless})*l/(E*h);
    R = 8{dimensionless}*mu*l/(pi*pow(r, 4{dimensionless}));
    R_v = 0.01{second}/C;
    length = l;
    E_m = E;
    radius = r;
    thickness = h;
    // Conservation Laws
    ode(v, t) = (u-u_d-R*v-beta_g*rho*g*l*cos(theta*pi/180{dimensionless}))/I;
    // ode(u_C, t) = (v_in_1+v_in_2-v)/(C/2{dimensionless});
    // ode(u_C_d, t) = (v-v_out)/(C/2{dimensionless});
    ode(q_C, t) = v_in_1+v_in_2-v;
    u_C = q_C/(C/2{dimensionless});
    ode(q_C_d, t) = v-v_out;
    u_C_d = q_C_d/(C/2{dimensionless});
    u = u_C+2{dimensionless}*R_v*(v_in_1+v_in_2-v);
    u_d = u_C_d+2{dimensionless}*R_v*(v-v_out);
  enddef;
  // 2in1out merge vp

  def comp vp_merge_type as
    var t: second {pub: in};
    // Constitutive parameters
    var mu: Js_per_m3 {pub: in};
    var rho: Js2_per_m5 {pub: in};
    var g: m_per_s2 {pub: in};
    var beta_g: dimensionless {pub: in};
    var theta: dimensionless {pub: in};
    var E: J_per_m3 {pub: in};
    var E_m: J_per_m3 {pub: out};
    var l: metre {pub: in};
    var length: metre {pub: out};
    var h: metre {pub: out};
    var thickness: metre {pub: out};
    var r: metre {pub: in};
    var radius: metre {pub: out};
    var I: Js2_per_m6 {pub: out};
    var C: m6_per_J {pub: out};
    var R: Js_per_m6 {pub: out};
    var R_v: Js_per_m6 {pub: out};
    var a_vessel: dimensionless {pub: in};
    var b_vessel: per_m {pub: in};
    var c_vessel: dimensionless {pub: in};
    var d_vessel: per_m {pub: in};
    // State Variables
    var v_in_1: m3_per_s {pub: in};
    var v_in_2: m3_per_s {pub: in};
    var u: J_per_m3 {pub: out};
    var u_C: J_per_m3 {pub: out};
    var v: m3_per_s {init: 0.0, pub: out};
    var u_out: J_per_m3 {pub: in};
    var q_C: m3 {init: 0.0, pub: out};
    // Constitutive Relations
    h = r*(a_vessel*exp(b_vessel*r)+c_vessel*exp(d_vessel*r));
    I = rho*l/(pi*sqr(r));
    C = 2{dimensionless}*pi*pow(r, 3{dimensionless})*l/(E*h);
    R = 8{dimensionless}*mu*l/(pi*pow(r, 4{dimensionless}));
    R_v = 0.01{second}/C;
    length = l;
    E_m = E;
    radius = r;
    thickness = h;
    // Conservation Laws
    ode(v, t) = (u-u_out-R*v-beta_g*rho*g*l*cos(theta*pi/180{dimensionless}))/I;
    // ode(u_C, t) = (v_in_1+v_in_2-v)/C;
    ode(q_C, t) = v_in_1+v_in_2-v;
    u_C = q_C/C;
    u = u_C+R_v*(v_in_1+v_in_2-v);
  enddef;

  def comp zero_flow as
    var v_zero: m3_per_s {pub: out};
    v_zero = 0{m3_per_s};
  enddef;

  def comp flow_sum_2_type as
    var t: second {pub: in};
    var v_1: m3_per_s {pub: in};
    var v_2: m3_per_s {pub: in};
    var v_total: m3_per_s {pub: out};
    v_total = v_1+v_2;
  enddef;
enddef;
